PsychoPy2experiment version="2020.2.3"
Settings
  Data file delimiter = comma
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Ospan5_4 _ время работает
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Routines
  Routine ThankYouScreen
    PolygonComponent Back
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent polygon_2
      fillColor = black
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Blank100
    PolygonComponent WhiteBCK_ISI
      fillColor = white
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine Remember_6c
    PolygonComponent Bc_21
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent In_21
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Dis21
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent Ex_21
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_50
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Dis21.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Dis21.text = Dis21.text + ' '
            elif 'backspace' in keys:
                Dis21.text = Dis21.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Dis21.text = Dis21.text + keys[0].upper()
                    modify = False
                else:
                    Dis21.text = Dis21.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Dis21.text = Dis21.text[:-1]
                    Dis21.text+= (u'Г')
            elif 'v' in keys:
                    Dis21.text = Dis21.text[:-1]
                    Dis21.text+= (u'М')
            elif 'y' in keys:
                    Dis21.text = Dis21.text[:-1]
                    Dis21.text+= (u'Н')
            elif 'r' in keys:
                    Dis21.text = Dis21.text[:-1]
                    Dis21.text+= (u'К')
            elif 'h' in keys:
                    Dis21.text = Dis21.text[:-1]
                    Dis21.text+= (u'Р')
            elif 'd' in keys:
                    Dis21.text = Dis21.text[:-1]
                    Dis21.text+= (u'В')
            elif 'k' in keys:
                    Dis21.text = Dis21.text[:-1]
                    Dis21.text+= (u'Л')
            elif 'p' in keys:
                    Dis21.text = Dis21.text[:-1]
                    Dis21.text+= (u'З')
            elif 'c' in keys:
                    Dis21.text = Dis21.text[:-1]
                    Dis21.text+= (u'С')
            elif 'n' in keys:
                    Dis21.text = Dis21.text[:-1]
                    Dis21.text+= (u'Т')
            elif 'g' in keys:
                    Dis21.text = Dis21.text[:-1]
                    Dis21.text+= (u'П')
            elif 'l' in keys:
                    Dis21.text = Dis21.text[:-1]
                    Dis21.text+= (u'Д')
            elif 'a' in keys:
                    Dis21.text = Dis21.text[:-1]
                    Dis21.text+= (u'Ф')
            elif 'comma' in keys:
                    Dis21.text = Dis21.text[:-5]
                    Dis21.text+= ('Б')
            elif 'semicolon' in keys:
                    Dis21.text = Dis21.text[:-9]
                    Dis21.text+= ('Ж')
            elif 'w' in keys:
                    Dis21.text = Dis21.text[:-1]
                    Dis21.text+= ('Ц')
            elif 'x' in keys:
                    Dis21.text = Dis21.text[:-1]
                    Dis21.text+= (u'Ч')
            elif 'i' in keys:
                    Dis21.text = Dis21.text[:-1]
                    Dis21.text+= ('Ш')
        #    else:
        #        Dis21.text = Dis21.text[:-1]
      End Routine:
        print(Dis21.text)
        Remember_21.addData('Answer of Pax', Dis21.text)
  Routine Ospan_6c
    PolygonComponent Bck_21
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
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    TextComponent Stim_21
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
      text [set every repeat] = $S21
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    KeyboardComponent Ext_21
      allowedKeys = '1','0',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
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  Routine Remember_6b
    PolygonComponent Bc_20
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent In_20
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Dis20
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent Ex_20
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_49
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Dis20.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Dis20.text = Dis20.text + ' '
            elif 'backspace' in keys:
                Dis20.text = Dis20.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Dis20.text = Dis20.text + keys[0].upper()
                    modify = False
                else:
                    Dis20.text = Dis20.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Dis20.text = Dis20.text[:-1]
                    Dis20.text+= (u'Г')
            elif 'v' in keys:
                    Dis20.text = Dis20.text[:-1]
                    Dis20.text+= (u'М')
            elif 'y' in keys:
                    Dis20.text = Dis20.text[:-1]
                    Dis20.text+= (u'Н')
            elif 'r' in keys:
                    Dis20.text = Dis20.text[:-1]
                    Dis20.text+= (u'К')
            elif 'h' in keys:
                    Dis20.text = Dis20.text[:-1]
                    Dis20.text+= (u'Р')
            elif 'd' in keys:
                    Dis20.text = Dis20.text[:-1]
                    Dis20.text+= (u'В')
            elif 'k' in keys:
                    Dis20.text = Dis20.text[:-1]
                    Dis20.text+= (u'Л')
            elif 'p' in keys:
                    Dis20.text = Dis20.text[:-1]
                    Dis20.text+= (u'З')
            elif 'c' in keys:
                    Dis20.text = Dis20.text[:-1]
                    Dis20.text+= (u'С')
            elif 'n' in keys:
                    Dis20.text = Dis20.text[:-1]
                    Dis20.text+= (u'Т')
            elif 'g' in keys:
                    Dis20.text = Dis20.text[:-1]
                    Dis20.text+= (u'П')
            elif 'l' in keys:
                    Dis20.text = Dis20.text[:-1]
                    Dis20.text+= (u'Д')
            elif 'a' in keys:
                    Dis20.text = Dis20.text[:-1]
                    Dis20.text+= (u'Ф')
            elif 'comma' in keys:
                    Dis20.text = Dis20.text[:-5]
                    Dis20.text+= ('Б')
            elif 'semicolon' in keys:
                    Dis20.text = Dis20.text[:-9]
                    Dis20.text+= ('Ж')
            elif 'w' in keys:
                    Dis20.text = Dis20.text[:-1]
                    Dis20.text+= ('Ц')
            elif 'i' in keys:
                    Dis20.text = Dis20.text[:-1]
                    Dis20.text+= ('Ш')
        #    else:
        #        Dis20.text = Dis20.text[:-1]
      End Routine:
        print(Dis20.text)
        Remember_20.addData('Answer of Pax', Dis20.text)
  Routine Ospan_6b
    PolygonComponent Bck_20
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
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    TextComponent Stim_20
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
      text [set every repeat] = $S20
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    KeyboardComponent Ext_20
      allowedKeys = '1','0',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
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  Routine Remember_3c
    PolygonComponent Bc_19
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent In_19
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Dis19
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent Ex_19
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_48
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Dis19.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Dis19.text = Dis19.text + ' '
            elif 'backspace' in keys:
                Dis19.text = Dis19.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Dis19.text = Dis19.text + keys[0].upper()
                    modify = False
                else:
                    Dis19.text = Dis19.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Dis19.text = Dis19.text[:-1]
                    Dis19.text+= (u'Г')
            elif 'v' in keys:
                    Dis19.text = Dis19.text[:-1]
                    Dis19.text+= (u'М')
            elif 'y' in keys:
                    Dis19.text = Dis19.text[:-1]
                    Dis19.text+= (u'Н')
            elif 'r' in keys:
                    Dis19.text = Dis19.text[:-1]
                    Dis19.text+= (u'К')
            elif 'h' in keys:
                    Dis19.text = Dis19.text[:-1]
                    Dis19.text+= (u'Р')
            elif 'd' in keys:
                    Dis19.text = Dis19.text[:-1]
                    Dis19.text+= (u'В')
            elif 'k' in keys:
                    Dis19.text = Dis19.text[:-1]
                    Dis19.text+= (u'Л')
            elif 'p' in keys:
                    Dis19.text = Dis19.text[:-1]
                    Dis19.text+= (u'З')
            elif 'c' in keys:
                    Dis19.text = Dis19.text[:-1]
                    Dis19.text+= (u'С')
            elif 'n' in keys:
                    Dis19.text = Dis19.text[:-1]
                    Dis19.text+= (u'Т')
            elif 'g' in keys:
                    Dis19.text = Dis19.text[:-1]
                    Dis19.text+= (u'П')
            elif 'l' in keys:
                    Dis19.text = Dis19.text[:-1]
                    Dis19.text+= (u'Д')
            elif 'a' in keys:
                    Dis19.text = Dis19.text[:-1]
                    Dis19.text+= (u'Ф')
            elif 'comma' in keys:
                    Dis19.text = Dis19.text[:-5]
                    Dis19.text+= ('Б')
            elif 'semicolon' in keys:
                    Dis19.text = Dis19.text[:-9]
                    Dis19.text+= ('Ж')
            elif 'w' in keys:
                    Dis19.text = Dis19.text[:-1]
                    Dis19.text+= ('Ц')
            elif 'i' in keys:
                    Dis19.text = Dis19.text[:-1]
                    Dis19.text+= ('Ш')
        #    else:
        #        Dis19.text = Dis19.text[:-1]
      End Routine:
        print(Dis19.text)
        Remember_19.addData('Answer of Pax', Dis19.text)
  Routine Ospan_3c
    PolygonComponent Bck_19
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
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    TextComponent Stim_19
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
      text [set every repeat] = $S19
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    KeyboardComponent Ext_19
      allowedKeys = '1','0',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
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  Routine Remember_5c
    PolygonComponent Bc_18
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent In_18
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Dis18
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent Ex_18
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_47
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Dis18.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Dis18.text = Dis18.text + ' '
            elif 'backspace' in keys:
                Dis18.text = Dis18.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Dis18.text = Dis18.text + keys[0].upper()
                    modify = False
                else:
                    Dis18.text = Dis18.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Dis18.text = Dis18.text[:-1]
                    Dis18.text+= (u'Г')
            elif 'v' in keys:
                    Dis18.text = Dis18.text[:-1]
                    Dis18.text+= (u'М')
            elif 'y' in keys:
                    Dis18.text = Dis18.text[:-1]
                    Dis18.text+= (u'Н')
            elif 'r' in keys:
                    Dis18.text = Dis18.text[:-1]
                    Dis18.text+= (u'К')
            elif 'h' in keys:
                    Dis18.text = Dis18.text[:-1]
                    Dis18.text+= (u'Р')
            elif 'd' in keys:
                    Dis18.text = Dis18.text[:-1]
                    Dis18.text+= (u'В')
            elif 'k' in keys:
                    Dis18.text = Dis18.text[:-1]
                    Dis18.text+= (u'Л')
            elif 'p' in keys:
                    Dis18.text = Dis18.text[:-1]
                    Dis18.text+= (u'З')
            elif 'c' in keys:
                    Dis18.text = Dis18.text[:-1]
                    Dis18.text+= (u'С')
            elif 'n' in keys:
                    Dis18.text = Dis18.text[:-1]
                    Dis18.text+= (u'Т')
            elif 'g' in keys:
                    Dis18.text = Dis18.text[:-1]
                    Dis18.text+= (u'П')
            elif 'l' in keys:
                    Dis18.text = Dis18.text[:-1]
                    Dis18.text+= (u'Д')
            elif 'a' in keys:
                    Dis18.text = Dis18.text[:-1]
                    Dis18.text+= (u'Ф')
            elif 'x' in keys:
                    Dis18.text = Dis18.text[:-1]
                    Dis18.text+= (u'Ч')
            elif 'comma' in keys:
                    Dis18.text = Dis18.text[:-5]
                    Dis18.text+= ('Б')
            elif 'semicolon' in keys:
                    Dis18.text = Dis18.text[:-9]
                    Dis18.text+= ('Ж')
            elif 'w' in keys:
                    Dis18.text = Dis18.text[:-1]
                    Dis18.text+= ('Ц')
            elif 'i' in keys:
                    Dis18.text = Dis18.text[:-1]
                    Dis18.text+= ('Ш')
        #    else:
        #        Dis18.text = Dis18.text[:-1]
      End Routine:
        print(Dis18.text)
        Remember_18.addData('Answer of Pax', Dis18.text)
  Routine Ospan_5c
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  Routine Remember_8c
    PolygonComponent Bc_17
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent In_17
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Dis17
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent Ex_17
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_46
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Dis17.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Dis17.text = Dis17.text + ' '
            elif 'backspace' in keys:
                Dis17.text = Dis17.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Dis17.text = Dis17.text + keys[0].upper()
                    modify = False
                else:
                    Dis17.text = Dis17.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Dis17.text = Dis17.text[:-1]
                    Dis17.text+= (u'Г')
            elif 'v' in keys:
                    Dis17.text = Dis17.text[:-1]
                    Dis17.text+= (u'М')
            elif 'y' in keys:
                    Dis17.text = Dis17.text[:-1]
                    Dis17.text+= (u'Н')
            elif 'r' in keys:
                    Dis17.text = Dis17.text[:-1]
                    Dis17.text+= (u'К')
            elif 'h' in keys:
                    Dis17.text = Dis17.text[:-1]
                    Dis17.text+= (u'Р')
            elif 'd' in keys:
                    Dis17.text = Dis17.text[:-1]
                    Dis17.text+= (u'В')
            elif 'k' in keys:
                    Dis17.text = Dis17.text[:-1]
                    Dis17.text+= (u'Л')
            elif 'p' in keys:
                    Dis17.text = Dis17.text[:-1]
                    Dis17.text+= (u'З')
            elif 'c' in keys:
                    Dis17.text = Dis17.text[:-1]
                    Dis17.text+= (u'С')
            elif 'n' in keys:
                    Dis17.text = Dis17.text[:-1]
                    Dis17.text+= (u'Т')
            elif 'g' in keys:
                    Dis17.text = Dis17.text[:-1]
                    Dis17.text+= (u'П')
            elif 'l' in keys:
                    Dis17.text = Dis17.text[:-1]
                    Dis17.text+= (u'Д')
            elif 'a' in keys:
                    Dis17.text = Dis17.text[:-1]
                    Dis17.text+= (u'Ф')
            elif 'comma' in keys:
                    Dis17.text = Dis17.text[:-5]
                    Dis17.text+= ('Б')
            elif 'semicolon' in keys:
                    Dis17.text = Dis17.text[:-9]
                    Dis17.text+= ('Ж')
            elif 'w' in keys:
                    Dis17.text = Dis17.text[:-1]
                    Dis17.text+= ('Ц')
            elif 'i' in keys:
                    Dis17.text = Dis17.text[:-1]
                    Dis17.text+= ('Ш')
        #    else:
        #        Dis17.text = Dis17.text[:-1]
      End Routine:
        print(Dis17.text)
        Remember_17.addData('Answer of Pax', Dis17.text)
  Routine Ospan_8c
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
  Routine Remember_7c
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  Routine Ospan_7c
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  Routine Remember_2c
    PolygonComponent Bc_15
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent In_15
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Dis15
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent Ex_15
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_44
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Dis15.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Dis15.text = Dis15.text + ' '
            elif 'backspace' in keys:
                Dis15.text = Dis15.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Dis15.text = Dis15.text + keys[0].upper()
                    modify = False
                else:
                    Dis15.text = Dis15.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Dis15.text = Dis15.text[:-1]
                    Dis15.text+= (u'Г')
            elif 'v' in keys:
                    Dis15.text = Dis15.text[:-1]
                    Dis15.text+= (u'М')
            elif 'y' in keys:
                    Dis15.text = Dis15.text[:-1]
                    Dis15.text+= (u'Н')
            elif 'r' in keys:
                    Dis15.text = Dis15.text[:-1]
                    Dis15.text+= (u'К')
            elif 'h' in keys:
                    Dis15.text = Dis15.text[:-1]
                    Dis15.text+= (u'Р')
            elif 'd' in keys:
                    Dis15.text = Dis15.text[:-1]
                    Dis15.text+= (u'В')
            elif 'k' in keys:
                    Dis15.text = Dis15.text[:-1]
                    Dis15.text+= (u'Л')
            elif 'p' in keys:
                    Dis15.text = Dis15.text[:-1]
                    Dis15.text+= (u'З')
            elif 'c' in keys:
                    Dis15.text = Dis15.text[:-1]
                    Dis15.text+= (u'С')
            elif 'n' in keys:
                    Dis15.text = Dis15.text[:-1]
                    Dis15.text+= (u'Т')
            elif 'g' in keys:
                    Dis15.text = Dis15.text[:-1]
                    Dis15.text+= (u'П')
            elif 'l' in keys:
                    Dis15.text = Dis15.text[:-1]
                    Dis15.text+= (u'Д')
            elif 'a' in keys:
                    Dis15.text = Dis15.text[:-1]
                    Dis15.text+= (u'Ф')
            elif 'comma' in keys:
                    Dis15.text = Dis15.text[:-5]
                    Dis15.text+= ('Б')
            elif 'semicolon' in keys:
                    Dis15.text = Dis15.text[:-9]
                    Dis15.text+= ('Ж')
            elif 'x' in keys:
                    Dis15.text = Dis15.text[:-1]
                    Dis15.text+= (u'Ч')
            elif 'w' in keys:
                    Dis15.text = Dis15.text[:-1]
                    Dis15.text+= ('Ц')
            elif 'i' in keys:
                    Dis15.text = Dis15.text[:-1]
                    Dis15.text+= ('Ш')
        #    else:
        #        Dis15.text = Dis15.text[:-1]
      End Routine:
        print(Dis15.text)
        Remember_15.addData('Answer of Pax', Dis15.text)
  Routine Ospan_2c
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  Routine Remember_4c
    PolygonComponent Bc_14
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent In_14
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Dis14
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent Ex_14
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_43
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Dis14.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Dis14.text = Dis14.text + ' '
            elif 'backspace' in keys:
                Dis14.text = Dis14.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Dis14.text = Dis14.text + keys[0].upper()
                    modify = False
                else:
                    Dis14.text = Dis14.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Dis14.text = Dis14.text[:-1]
                    Dis14.text+= (u'Г')
            elif 'v' in keys:
                    Dis14.text = Dis14.text[:-1]
                    Dis14.text+= (u'М')
            elif 'y' in keys:
                    Dis14.text = Dis14.text[:-1]
                    Dis14.text+= (u'Н')
            elif 'r' in keys:
                    Dis14.text = Dis14.text[:-1]
                    Dis14.text+= (u'К')
            elif 'h' in keys:
                    Dis14.text = Dis14.text[:-1]
                    Dis14.text+= (u'Р')
            elif 'd' in keys:
                    Dis14.text = Dis14.text[:-1]
                    Dis14.text+= (u'В')
            elif 'k' in keys:
                    Dis14.text = Dis14.text[:-1]
                    Dis14.text+= (u'Л')
            elif 'p' in keys:
                    Dis14.text = Dis14.text[:-1]
                    Dis14.text+= (u'З')
            elif 'c' in keys:
                    Dis14.text = Dis14.text[:-1]
                    Dis14.text+= (u'С')
            elif 'n' in keys:
                    Dis14.text = Dis14.text[:-1]
                    Dis14.text+= (u'Т')
            elif 'g' in keys:
                    Dis14.text = Dis14.text[:-1]
                    Dis14.text+= (u'П')
            elif 'l' in keys:
                    Dis14.text = Dis14.text[:-1]
                    Dis14.text+= (u'Д')
            elif 'a' in keys:
                    Dis14.text = Dis14.text[:-1]
                    Dis14.text+= (u'Ф')
            elif 'comma' in keys:
                    Dis14.text = Dis14.text[:-5]
                    Dis14.text+= ('Б')
            elif 'semicolon' in keys:
                    Dis14.text = Dis14.text[:-9]
                    Dis14.text+= ('Ж')
            elif 'w' in keys:
                    Dis14.text = Dis14.text[:-1]
                    Dis14.text+= ('Ц')
            elif 'x' in keys:
                    Dis14.text = Dis14.text[:-1]
                    Dis14.text+= ('Ч')
            elif 'i' in keys:
                    Dis14.text = Dis14.text[:-1]
                    Dis14.text+= ('Ш')
        #    else:
        #        Dis14.text = Dis14.text[:-1]
      End Routine:
        print(Dis14.text)
        Remember_14.addData('Answer of Pax', Dis14.text)
  Routine Ospan_4c
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  Routine Remember_3b
    PolygonComponent Bc_13
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent In_13
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Dis13
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent Ex_13
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_42
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Dis13.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Dis13.text = Dis13.text + ' '
            elif 'backspace' in keys:
                Dis13.text = Dis13.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Dis13.text = Dis13.text + keys[0].upper()
                    modify = False
                else:
                    Dis13.text = Dis13.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Dis13.text = Dis13.text[:-1]
                    Dis13.text+= (u'Г')
            elif 'v' in keys:
                    Dis13.text = Dis13.text[:-1]
                    Dis13.text+= (u'М')
            elif 'y' in keys:
                    Dis13.text = Dis13.text[:-1]
                    Dis13.text+= (u'Н')
            elif 'r' in keys:
                    Dis13.text = Dis13.text[:-1]
                    Dis13.text+= (u'К')
            elif 'h' in keys:
                    Dis13.text = Dis13.text[:-1]
                    Dis13.text+= (u'Р')
            elif 'd' in keys:
                    Dis13.text = Dis13.text[:-1]
                    Dis13.text+= (u'В')
            elif 'k' in keys:
                    Dis13.text = Dis13.text[:-1]
                    Dis13.text+= (u'Л')
            elif 'p' in keys:
                    Dis13.text = Dis13.text[:-1]
                    Dis13.text+= (u'З')
            elif 'c' in keys:
                    Dis13.text = Dis13.text[:-1]
                    Dis13.text+= (u'С')
            elif 'n' in keys:
                    Dis13.text = Dis13.text[:-1]
                    Dis13.text+= (u'Т')
            elif 'g' in keys:
                    Dis13.text = Dis13.text[:-1]
                    Dis13.text+= (u'П')
            elif 'l' in keys:
                    Dis13.text = Dis13.text[:-1]
                    Dis13.text+= (u'Д')
            elif 'a' in keys:
                    Dis13.text = Dis13.text[:-1]
                    Dis13.text+= (u'Ф')
            elif 'comma' in keys:
                    Dis13.text = Dis13.text[:-5]
                    Dis13.text+= ('Б')
            elif 'semicolon' in keys:
                    Dis13.text = Dis13.text[:-9]
                    Dis13.text+= ('Ж')
            elif 'w' in keys:
                    Dis13.text = Dis13.text[:-1]
                    Dis13.text+= ('Ц')
            elif 'x' in keys:
                    Dis13.text = Dis13.text[:-1]
                    Dis13.text+= (u'Ч')
            elif 'i' in keys:
                    Dis13.text = Dis13.text[:-1]
                    Dis13.text+= ('Ш')
        #    else:
        #        Dis13.text = Dis13.text[:-1]
      End Routine:
        print(Dis13.text)
        Remember_13.addData('Answer of Pax', Dis13.text)
  Routine Ospan_3b
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  Routine Remember_3a
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  Routine Ospan_3a
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  Routine Remember_4b
    PolygonComponent Bc_11
      fillColor = $[1,1,1]
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent In_11
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Dis11
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent Ex_11
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_40
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Dis11.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Dis11.text = Dis11.text + ' '
            elif 'backspace' in keys:
                Dis11.text = Dis11.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Dis11.text = Dis11.text + keys[0].upper()
                    modify = False
                else:
                    Dis11.text = Dis11.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Dis11.text = Dis11.text[:-1]
                    Dis11.text+= (u'Г')
            elif 'v' in keys:
                    Dis11.text = Dis11.text[:-1]
                    Dis11.text+= (u'М')
            elif 'y' in keys:
                    Dis11.text = Dis11.text[:-1]
                    Dis11.text+= (u'Н')
            elif 'r' in keys:
                    Dis11.text = Dis11.text[:-1]
                    Dis11.text+= (u'К')
            elif 'h' in keys:
                    Dis11.text = Dis11.text[:-1]
                    Dis11.text+= (u'Р')
            elif 'd' in keys:
                    Dis11.text = Dis11.text[:-1]
                    Dis11.text+= (u'В')
            elif 'k' in keys:
                    Dis11.text = Dis11.text[:-1]
                    Dis11.text+= (u'Л')
            elif 'p' in keys:
                    Dis11.text = Dis11.text[:-1]
                    Dis11.text+= (u'З')
            elif 'c' in keys:
                    Dis11.text = Dis11.text[:-1]
                    Dis11.text+= (u'С')
            elif 'n' in keys:
                    Dis11.text = Dis11.text[:-1]
                    Dis11.text+= (u'Т')
            elif 'g' in keys:
                    Dis11.text = Dis11.text[:-1]
                    Dis11.text+= (u'П')
            elif 'l' in keys:
                    Dis11.text = Dis11.text[:-1]
                    Dis11.text+= (u'Д')
            elif 'a' in keys:
                    Dis11.text = Dis11.text[:-1]
                    Dis11.text+= (u'Ф')
            elif 'comma' in keys:
                    Dis11.text = Dis11.text[:-5]
                    Dis11.text+= ('Б')
            elif 'semicolon' in keys:
                    Dis11.text = Dis11.text[:-9]
                    Dis11.text+= ('Ж')
            elif 'w' in keys:
                    Dis11.text = Dis11.text[:-1]
                    Dis11.text+= ('Ц')
            elif 'i' in keys:
                    Dis11.text = Dis11.text[:-1]
                    Dis11.text+= ('Ш')
        #    else:
        #        Dis11.text = Dis11.text[:-1]
      End Routine:
        print(Dis11.text)
        Remember_11.addData('Answer of Pax', Dis11.text)
  Routine Ospan_4b
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  Routine Remember_7b
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  Routine Ospan_7b
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  Routine Remember_8b
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  Routine Ospan_8b
    PolygonComponent Bck_9
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
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    TextComponent stim_9
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
      text [set every repeat] = $S9
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    KeyboardComponent Ext_9
      allowedKeys = '1','0',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
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  Routine Remember_2b
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  Routine Ospan_2b
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  Routine Remember_5b
    PolygonComponent Bc_7
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent In_7
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Dis7
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent Ex_7
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_36
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Dis7.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Dis7.text = Dis7.text + ' '
            elif 'backspace' in keys:
                Dis7.text = Dis7.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Dis7.text = Dis7.text + keys[0].upper()
                    modify = False
                else:
                    Dis7.text = Dis7.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Dis7.text = Dis7.text[:-1]
                    Dis7.text+= (u'Г')
            elif 'v' in keys:
                    Dis7.text = Dis7.text[:-1]
                    Dis7.text+= (u'М')
            elif 'y' in keys:
                    Dis7.text = Dis7.text[:-1]
                    Dis7.text+= (u'Н')
            elif 'r' in keys:
                    Dis7.text = Dis7.text[:-1]
                    Dis7.text+= (u'К')
            elif 'h' in keys:
                    Dis7.text = Dis7.text[:-1]
                    Dis7.text+= (u'Р')
            elif 'd' in keys:
                    Dis7.text = Dis7.text[:-1]
                    Dis7.text+= (u'В')
            elif 'k' in keys:
                    Dis7.text = Dis7.text[:-1]
                    Dis7.text+= (u'Л')
            elif 'p' in keys:
                    Dis7.text = Dis7.text[:-1]
                    Dis7.text+= (u'З')
            elif 'c' in keys:
                    Dis7.text = Dis7.text[:-1]
                    Dis7.text+= (u'С')
            elif 'n' in keys:
                    Dis7.text = Dis7.text[:-1]
                    Dis7.text+= (u'Т')
            elif 'g' in keys:
                    Dis7.text = Dis7.text[:-1]
                    Dis7.text+= (u'П')
            elif 'l' in keys:
                    Dis7.text = Dis7.text[:-1]
                    Dis7.text+= (u'Д')
            elif 'a' in keys:
                    Dis7.text = Dis7.text[:-1]
                    Dis7.text+= (u'Ф')
            elif 'x' in keys:
                    Dis7.text = Dis7.text[:-1]
                    Dis7.text+= (u'Ч')
            elif 'comma' in keys:
                    Dis7.text = Dis7.text[:-5]
                    Dis7.text+= ('Б')
            elif 'semicolon' in keys:
                    Dis7.text = Dis7.text[:-9]
                    Dis7.text+= ('Ж')
            elif 'w' in keys:
                    Dis7.text = Dis7.text[:-1]
                    Dis7.text+= ('Ц')
            elif 'i' in keys:
                    Dis7.text = Dis7.text[:-1]
                    Dis7.text+= ('Ш')
        #    else:
        #        Dis7.text = Dis7.text[:-1]
      End Routine:
        print(Dis7.text)
        Remember_7.addData('Answer of Pax', Dis7.text)
  Routine Ospan_5b
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  Routine Remember_8a
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  Routine Ospan_8a
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  Routine Remember_2a
    PolygonComponent Bc_5
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent In_5
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Dis5
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent Ex_5
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_34
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Dis5.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Dis5.text = Dis5.text + ' '
            elif 'backspace' in keys:
                Dis5.text = Dis5.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Dis5.text = Dis5.text + keys[0].upper()
                    modify = False
                else:
                    Dis5.text = Dis5.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Dis5.text = Dis5.text[:-1]
                    Dis5.text+= (u'Г')
            elif 'v' in keys:
                    Dis5.text = Dis5.text[:-1]
                    Dis5.text+= (u'М')
            elif 'y' in keys:
                    Dis5.text = Dis5.text[:-1]
                    Dis5.text+= (u'Н')
            elif 'r' in keys:
                    Dis5.text = Dis5.text[:-1]
                    Dis5.text+= (u'К')
            elif 'h' in keys:
                    Dis5.text = Dis5.text[:-1]
                    Dis5.text+= (u'Р')
            elif 'd' in keys:
                    Dis5.text = Dis5.text[:-1]
                    Dis5.text+= (u'В')
            elif 'k' in keys:
                    Dis5.text = Dis5.text[:-1]
                    Dis5.text+= (u'Л')
            elif 'p' in keys:
                    Dis5.text = Dis5.text[:-1]
                    Dis5.text+= (u'З')
            elif 'c' in keys:
                    Dis5.text = Dis5.text[:-1]
                    Dis5.text+= (u'С')
            elif 'n' in keys:
                    Dis5.text = Dis5.text[:-1]
                    Dis5.text+= (u'Т')
            elif 'g' in keys:
                    Dis5.text = Dis5.text[:-1]
                    Dis5.text+= (u'П')
            elif 'x' in keys:
                    Dis5.text = Dis5.text[:-1]
                    Dis5.text+= (u'Ч')
            elif 'l' in keys:
                    Dis5.text = Dis5.text[:-1]
                    Dis5.text+= (u'Д')
            elif 'a' in keys:
                    Dis5.text = Dis5.text[:-1]
                    Dis5.text+= (u'Ф')
            elif 'comma' in keys:
                    Dis5.text = Dis5.text[:-5]
                    Dis5.text+= ('Б')
            elif 'semicolon' in keys:
                    Dis5.text = Dis5.text[:-9]
                    Dis5.text+= ('Ж')
            elif 'w' in keys:
                    Dis5.text = Dis5.text[:-1]
                    Dis5.text+= ('Ц')
            elif 'i' in keys:
                    Dis5.text = Dis5.text[:-1]
                    Dis5.text+= ('Ш')
        #    else:
        #        Dis5.text = Dis5.text[:-1]
      End Routine:
        print(Dis5.text)
        Remember_5.addData('Answer of Pax', Dis5.text)
  Routine Ospan_2a
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  Routine Remember_6a
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  Routine Ospan_6a
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  Routine Remember_7a
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  Routine Ospan_7a
    PolygonComponent Bck_3
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
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    TextComponent Stimuli_3
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
      text [set every repeat] = $S3
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    KeyboardComponent Ext_3
      allowedKeys = '0','1',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
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  Routine Remember_5a
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  Routine Ospan_5a
    PolygonComponent Bck_2
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
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    TextComponent Stimuli_2
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
      text [set every repeat] = $S2
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    KeyboardComponent Ext_2
      allowedKeys = '0','1',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
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  Routine Remember_4a
    PolygonComponent Bc_1
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent Ins_1
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Dis1
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent Ex_1
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_30
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Dis1.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Dis1.text = Dis1.text + ' '
            elif 'backspace' in keys:
                Dis1.text = Dis1.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Dis1.text = Dis1.text + keys[0].upper()
                    modify = False
                else:
                    Dis1.text = Dis1.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Dis1.text = Dis1.text[:-1]
                    Dis1.text+= (u'Г')
            elif 'v' in keys:
                    Dis1.text = Dis1.text[:-1]
                    Dis1.text+= (u'М')
            elif 'y' in keys:
                    Dis1.text = Dis1.text[:-1]
                    Dis1.text+= (u'Н')
            elif 'r' in keys:
                    Dis1.text = Dis1.text[:-1]
                    Dis1.text+= (u'К')
            elif 'h' in keys:
                    Dis1.text = Dis1.text[:-1]
                    Dis1.text+= (u'Р')
            elif 'd' in keys:
                    Dis1.text = Dis1.text[:-1]
                    Dis1.text+= (u'В')
            elif 'k' in keys:
                    Dis1.text = Dis1.text[:-1]
                    Dis1.text+= (u'Л')
            elif 'p' in keys:
                    Dis1.text = Dis1.text[:-1]
                    Dis1.text+= (u'З')
            elif 'c' in keys:
                    Dis1.text = Dis1.text[:-1]
                    Dis1.text+= (u'С')
            elif 'n' in keys:
                    Dis1.text = Dis1.text[:-1]
                    Dis1.text+= (u'Т')
            elif 'g' in keys:
                    Dis1.text = Dis1.text[:-1]
                    Dis1.text+= (u'П')
            elif 'l' in keys:
                    Dis1.text = Dis1.text[:-1]
                    Dis1.text+= (u'Д')
            elif 'a' in keys:
                    Dis1.text = Dis1.text[:-1]
                    Dis1.text+= (u'Ф')
            elif 'comma' in keys:
                    Dis1.text = Dis1.text[:-5]
                    Dis1.text+= ('Б')
            elif 'semicolon' in keys:
                    Dis1.text = Dis1.text[:-9]
                    Dis1.text+= ('Ж')
            elif 'w' in keys:
                    Dis1.text = Dis1.text[:-1]
                    Dis1.text+= ('Ц')
            elif 'x' in keys:
                    Dis1.text = Dis1.text[:-1]
                    Dis1.text+= (u'Ч')
            elif 'i' in keys:
                    Dis1.text = Dis1.text[:-1]
                    Dis1.text+= ('Ш')
        #    else:
        #        Dis1.text = Dis1.text[:-1]
      End Routine:
        print(Dis1.text)
        Remember_1.addData('Answer of Pax', Dis1.text)
  Routine Ospan_4a
    PolygonComponent Bkg_1
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
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    TextComponent Stimuli_1
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
      text [set every repeat] = $S1
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    KeyboardComponent Ext1
      allowedKeys = '0','1',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
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  Routine Instruction_3
  Routine PrRemember_3c
    PolygonComponent B_7
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent I_6
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Display6
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent E_6
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Display6.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Display6.text = Display6.text + ' '
            elif 'backspace' in keys:
                Display6.text = Display6.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Display6.text = Display6.text + keys[0].upper()
                    modify = False
                else:
                    Display6.text = Display6.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Display6.text = Display6.text[:-1]
                    Display6.text+= (u'Г')
            elif 'v' in keys:
                    Display6.text = Display6.text[:-1]
                    Display6.text+= (u'М')
            elif 'y' in keys:
                    Display6.text = Display6.text[:-1]
                    Display6.text+= (u'Н')
            elif 'r' in keys:
                    Display6.text = Display6.text[:-1]
                    Display6.text+= (u'К')
            elif 'h' in keys:
                    Display6.text = Display6.text[:-1]
                    Display6.text+= (u'Р')
            elif 'd' in keys:
                    Display6.text = Display6.text[:-1]
                    Display6.text+= (u'В')
            elif 'k' in keys:
                    Display6.text = Display6.text[:-1]
                    Display6.text+= (u'Л')
            elif 'p' in keys:
                    Display6.text = Display6.text[:-1]
                    Display6.text+= (u'З')
            elif 'c' in keys:
                    Display6.text = Display6.text[:-1]
                    Display6.text+= (u'С')
            elif 'n' in keys:
                    Display6.text = Display6.text[:-1]
                    Display6.text+= (u'Т')
            elif 'g' in keys:
                    Display6.text = Display6.text[:-1]
                    Display6.text+= (u'П')
            elif 'l' in keys:
                    Display6.text = Display6.text[:-1]
                    Display6.text+= (u'Д')
            elif 'a' in keys:
                    Display6.text = Display6.text[:-1]
                    Display6.text+= (u'Ф')
            elif 'comma' in keys:
                    Display6.text = Display6.text[:-5]
                    Display6.text+= ('Б')
            elif 'semicolon' in keys:
                    Display6.text = Display6.text[:-9]
                    Display6.text+= ('Ж')
            elif 'w' in keys:
                    Display6.text = Display6.text[:-1]
                    Display6.text+= ('Ц')
            elif 'i' in keys:
                    Display6.text = Display6.text[:-1]
                    Display6.text+= ('Ш')
        #    else:
        #        Display6.text = Display6.text[:-1]
      End Routine:
        Recall_6.addData('Answer of Pax', Display6.text)
  Routine Practice_3c
    PolygonComponent Bckgr_6
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent Practice_6
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $P6
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    TextComponent Instr_6
      color = black
      letterHeight = 0.05
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = 1 (верно) ----------- 0 (неверно)
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    KeyboardComponent Exit_6
      allowedKeys = '0','1',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Auto->JS
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      End Routine:
        RT_list.append(Exit_6.rt)
        Resp_list.append(Exit_6.keys)
        print(Exit_6.rt)
        print(Resp_list)
  Routine PrRemember_3b
    PolygonComponent B_5
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent I_5
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Display5
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent E_5
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Display5.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Display5.text = Display5.text + ' '
            elif 'backspace' in keys:
                Display5.text = Display5.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Display5.text = Display5.text + keys[0].upper()
                    modify = False
                else:
                    Display5.text = Display5.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Display5.text = Display5.text[:-1]
                    Display5.text+= (u'Г')
            elif 'v' in keys:
                    Display5.text = Display5.text[:-1]
                    Display5.text+= (u'М')
            elif 'y' in keys:
                    Display5.text = Display5.text[:-1]
                    Display5.text+= (u'Н')
            elif 'r' in keys:
                    Display5.text = Display5.text[:-1]
                    Display5.text+= (u'К')
            elif 'h' in keys:
                    Display5.text = Display5.text[:-1]
                    Display5.text+= (u'Р')
            elif 'd' in keys:
                    Display5.text = Display5.text[:-1]
                    Display5.text+= (u'В')
            elif 'k' in keys:
                    Display5.text = Display5.text[:-1]
                    Display5.text+= (u'Л')
            elif 'p' in keys:
                    Display5.text = Display5.text[:-1]
                    Display5.text+= (u'З')
            elif 'c' in keys:
                    Display5.text = Display5.text[:-1]
                    Display5.text+= (u'С')
            elif 'n' in keys:
                    Display5.text = Display5.text[:-1]
                    Display5.text+= (u'Т')
            elif 'g' in keys:
                    Display5.text = Display5.text[:-1]
                    Display5.text+= (u'П')
            elif 'l' in keys:
                    Display5.text = Display5.text[:-1]
                    Display5.text+= (u'Д')
            elif 'a' in keys:
                    Display5.text = Display5.text[:-1]
                    Display5.text+= (u'Ф')
            elif 'comma' in keys:
                    Display5.text = Display5.text[:-5]
                    Display5.text+= ('Б')
            elif 'semicolon' in keys:
                    Display5.text = Display5.text[:-9]
                    Display5.text+= ('Ж')
            elif 'w' in keys:
                    Display5.text = Display5.text[:-1]
                    Display5.text+= ('Ц')
            elif 'i' in keys:
                    Display5.text = Display5.text[:-1]
                    Display5.text+= ('Ш')
        #    else:
        #        Display5.text = Display5.text[:-1]
      End Routine:
        Recall_5.addData('Answer of Pax', Display5.text)
  Routine Practice_3b
    PolygonComponent Bckgr_5
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent Practice_5
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $P5
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    TextComponent Instr_5
      color = black
      letterHeight = 0.05
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = 1 (верно) ----------- 0 (неверно)
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    KeyboardComponent Exit_5
      allowedKeys = '0','1',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        RT_list.append(Exit_5.rt)
        Resp_list.append(Exit_5.keys)
        print(Exit_5.rt)
        print(Resp_list)
  Routine PrRemember_3a
    PolygonComponent B_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent I_2
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Display4
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent E_4
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Display4.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Display4.text = Display4.text + ' '
            elif 'backspace' in keys:
                Display4.text = Display4.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Display4.text = Display4.text + keys[0].upper()
                    modify = False
                else:
                    Display4.text = Display4.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Display4.text = Display4.text[:-1]
                    Display4.text+= (u'Г')
            elif 'v' in keys:
                    Display4.text = Display4.text[:-1]
                    Display4.text+= (u'М')
            elif 'y' in keys:
                    Display4.text = Display4.text[:-1]
                    Display4.text+= (u'Н')
            elif 'r' in keys:
                    Display4.text = Display4.text[:-1]
                    Display4.text+= (u'К')
            elif 'h' in keys:
                    Display4.text = Display4.text[:-1]
                    Display4.text+= (u'Р')
            elif 'd' in keys:
                    Display4.text = Display4.text[:-1]
                    Display4.text+= (u'В')
            elif 'k' in keys:
                    Display4.text = Display4.text[:-1]
                    Display4.text+= (u'Л')
            elif 'p' in keys:
                    Display4.text = Display4.text[:-1]
                    Display4.text+= (u'З')
            elif 'c' in keys:
                    Display4.text = Display4.text[:-1]
                    Display4.text+= (u'С')
            elif 'n' in keys:
                    Display4.text = Display4.text[:-1]
                    Display4.text+= (u'Т')
            elif 'g' in keys:
                    Display4.text = Display4.text[:-1]
                    Display4.text+= (u'П')
            elif 'l' in keys:
                    Display4.text = Display4.text[:-1]
                    Display4.text+= (u'Д')
            elif 'a' in keys:
                    Display4.text = Display4.text[:-1]
                    Display4.text+= (u'Ф')
            elif 'comma' in keys:
                    Display4.text = Display4.text[:-5]
                    Display4.text+= ('Б')
            elif 'semicolon' in keys:
                    Display4.text = Display4.text[:-9]
                    Display4.text+= ('Ж')
            elif 'w' in keys:
                    Display4.text = Display4.text[:-1]
                    Display4.text+= ('Ц')
            elif 'i' in keys:
                    Display4.text = Display4.text[:-1]
                    Display4.text+= ('Ш')
        #    else:
        #        Display4.text = Display4.text[:-1]
      End Routine:
        Recall_4.addData('Answer of Pax', Display4.text)
  Routine Practice_3a
    PolygonComponent Bckgr_4
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent Practice_4
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $P4
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    TextComponent Instr_4
      color = black
      letterHeight = 0.05
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = 1 (верно) ----------- 0 (неверно)
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    KeyboardComponent Exit_4
      allowedKeys = '0','1',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        RT_list.append(Exit_4.rt)
        Resp_list.append(Exit_4.keys)
        print(Exit_4.rt)
        print(Resp_list)
  Routine PrRemember_2c
    PolygonComponent B_1
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent In_1
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Display3.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Display3.text = Display3.text + ' '
            elif 'backspace' in keys:
                Display3.text = Display3.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Display3.text = Display3.text + keys[0].upper()
                    modify = False
                else:
                    Display3.text = Display3.text + keys[0]

        if len(keys):
            if 'u' in keys:
                    Display3.text = Display3.text[:-1]
                    Display3.text+= (u'Г')
            elif 'v' in keys:
                    Display3.text = Display3.text[:-1]
                    Display3.text+= (u'М')
            elif 'y' in keys:
                    Display3.text = Display3.text[:-1]
                    Display3.text+= (u'Н')
            elif 'r' in keys:
                    Display3.text = Display3.text[:-1]
                    Display3.text+= (u'К')
            elif 'h' in keys:
                    Display3.text = Display3.text[:-1]
                    Display3.text+= (u'Р')
            elif 'd' in keys:
                    Display3.text = Display3.text[:-1]
                    Display3.text+= (u'В')
            elif 'k' in keys:
                    Display3.text = Display3.text[:-1]
                    Display3.text+= (u'Л')
            elif 'p' in keys:
                    Display3.text = Display3.text[:-1]
                    Display3.text+= (u'З')
            elif 'c' in keys:
                    Display3.text = Display3.text[:-1]
                    Display3.text+= (u'С')
            elif 'n' in keys:
                    Display3.text = Display3.text[:-1]
                    Display3.text+= (u'Т')
            elif 'g' in keys:
                    Display3.text = Display3.text[:-1]
                    Display3.text+= (u'П')
            elif 'l' in keys:
                    Display3.text = Display3.text[:-1]
                    Display3.text+= (u'Д')
            elif 'a' in keys:
                    Display3.text = Display3.text[:-1]
                    Display3.text+= (u'Ф')
            elif 'comma' in keys:
                    Display3.text = Display3.text[:-5]
                    Display3.text+= ('Б')
            elif 'semicolon' in keys:
                    Display3.text = Display3.text[:-9]
                    Display3.text+= ('Ж')
            elif 'w' in keys:
                    Display3.text = Display3.text[:-1]
                    Display3.text+= ('Ц')
            elif 'i' in keys:
                    Display3.text = Display3.text[:-1]
                    Display3.text+= ('Ш')
        #    else:
        #        Display3.text = Display3.text[:-1]
      End Routine:
        Recall_3.addData('Answer of Pax', Display3.text)
    TextComponent Display3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent E_3
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_2c
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  Routine PrRemember_2b
    PolygonComponent Background___2
      fillColor = white
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
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    TextComponent Instr2
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Display2.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Display2.text = Display2.text + ' '
            elif 'backspace' in keys:
                Display2.text = Display2.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Display2.text = Display2.text + keys[0].upper()
                    modify = False
                else:
                    Display2.text = Display2.text + keys[0]

        if len(keys):
            if 'u' in keys:
                    Display2.text = Display2.text[:-1]
                    Display2.text+= (u'Г')
            elif 'v' in keys:
                    Display2.text = Display2.text[:-1]
                    Display2.text+= (u'М')
            elif 'y' in keys:
                    Display2.text = Display2.text[:-1]
                    Display2.text+= (u'Н')
            elif 'r' in keys:
                    Display2.text = Display2.text[:-1]
                    Display2.text+= (u'К')
            elif 'h' in keys:
                    Display2.text = Display2.text[:-1]
                    Display2.text+= (u'Р')
            elif 'd' in keys:
                    Display2.text = Display2.text[:-1]
                    Display2.text+= (u'В')
            elif 'k' in keys:
                    Display2.text = Display2.text[:-1]
                    Display2.text+= (u'Л')
            elif 'p' in keys:
                    Display2.text = Display2.text[:-1]
                    Display2.text+= (u'З')
            elif 'c' in keys:
                    Display2.text = Display2.text[:-1]
                    Display2.text+= (u'С')
            elif 'n' in keys:
                    Display2.text = Display2.text[:-1]
                    Display2.text+= (u'Т')
            elif 'g' in keys:
                    Display2.text = Display2.text[:-1]
                    Display2.text+= (u'П')
            elif 'l' in keys:
                    Display2.text = Display2.text[:-1]
                    Display2.text+= (u'Д')
            elif 'a' in keys:
                    Display2.text = Display2.text[:-1]
                    Display2.text+= (u'Ф')
            elif 'comma' in keys:
                    Display2.text = Display2.text[:-5]
                    Display2.text+= ('Б')
            elif 'semicolon' in keys:
                    Display2.text = Display2.text[:-9]
                    Display2.text+= ('Ж')
            elif 'w' in keys:
                    Display2.text = Display2.text[:-1]
                    Display2.text+= ('Ц')
            elif 'i' in keys:
                    Display2.text = Display2.text[:-1]
                    Display2.text+= ('Ш')
        #    else:
        #        Display2.text = Display2.text[:-1]
      End Routine:
        Recall_2.addData('Answer of Pax', Display2.text)
    TextComponent Display2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent ExitButton2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (0, -.25)
      startVal [time (s)] = 0.0
      text = Нажмите "enter" после того, как вспомнили буквы.
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  Routine Practice_2b
    PolygonComponent Background__2
      fillColor = white
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
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    TextComponent Practice__2a
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $P2
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    TextComponent Instr_2a
      color = black
      letterHeight = 0.05
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = 1 (верно) ----------- 0 (неверно)
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    KeyboardComponent key_resp_2
      allowedKeys = '0','1',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        RT_list.append(key_resp_2.rt)
        Resp_list.append(key_resp_2.keys)
        print(key_resp_2.rt)
        print(Resp_list)
  Routine PrRemember_2a
    PolygonComponent Background_2
      fillColor = white
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
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    TextComponent Instr1
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Display.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Display.text = Display.text + ' '
            elif 'backspace' in keys:
                Display.text = Display.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Display.text = Display.text + keys[0].upper()
                    modify = False
                else:
                    Display.text = Display.text + keys[0]

        if len(keys):
            if 'u' in keys:
                    Display.text = Display.text[:-1]
                    Display.text+= (u'Г')
            elif 'v' in keys:
                    Display.text = Display.text[:-1]
                    Display.text+= (u'М')
            elif 'y' in keys:
                    Display.text = Display.text[:-1]
                    Display.text+= (u'Н')
            elif 'r' in keys:
                    Display.text = Display.text[:-1]
                    Display.text+= (u'К')
            elif 'h' in keys:
                    Display.text = Display.text[:-1]
                    Display.text+= (u'Р')
            elif 'd' in keys:
                    Display.text = Display.text[:-1]
                    Display.text+= (u'В')
            elif 'k' in keys:
                    Display.text = Display.text[:-1]
                    Display.text+= (u'Л')
            elif 'p' in keys:
                    Display.text = Display.text[:-1]
                    Display.text+= (u'З')
            elif 'c' in keys:
                    Display.text = Display.text[:-1]
                    Display.text+= (u'С')
            elif 'n' in keys:
                    Display.text = Display.text[:-1]
                    Display.text+= (u'Т')
            elif 'g' in keys:
                    Display.text = Display.text[:-1]
                    Display.text+= (u'П')
            elif 'l' in keys:
                    Display.text = Display.text[:-1]
                    Display.text+= (u'Д')
            elif 'a' in keys:
                    Display.text = Display.text[:-1]
                    Display.text+= (u'Ф')
            elif 'comma' in keys:
                    Display.text = Display.text[:-5]
                    Display.text+= ('Б')
            elif 'semicolon' in keys:
                    Display.text = Display.text[:-9]
                    Display.text+= ('Ж')
            elif 'w' in keys:
                    Display.text = Display.text[:-1]
                    Display.text+= ('Ц')
            elif 'i' in keys:
                    Display.text = Display.text[:-1]
                    Display.text+= ('Ш')
        #    else:
        #        Display.text = Display.text[:-1]

        n = Display.text
      End Routine:
        Recall_1.addData('Answer of Pax', n)
    TextComponent Display
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent Exit1
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = Нажмите "enter" после того, как вспомнили буквы.
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  Routine CodePart
  Routine Time_Calculation
  Routine Instruction_2
    PolygonComponent Background
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent Instruction
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Мы рассчитали для вас персональное время выполнения задач, основываясь на тренировочных упражнениях. Это сделает наш эксперимент для вас  максимально комфортным. Помните, что в эксперименте важны и правильность решения задач, и количество букв, которые вы запомните.

        Если вы считаете, что готовы приступить к эксперименту, нажмите клавишу "Г".
        Если вам необходимы 6 дополнительных разминочных блока, нажмите "P".
    KeyboardComponent Decision
      allowedKeys = 'u','h',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent DecisionToStart
      Code Type = Auto->JS
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      End Routine:
        if(Decision.keys == 'h'):
            DoPrac = 1

        if(Decision.keys == 'u'):
            DoPrac = 0
            DoExp = 1
    CodeComponent TimeAv
      Code Type = Auto->JS
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      Begin Routine:
        #print('responses = ', Resp_list)
        #print('correct responses = ', Correct_list)
        #print('timing = ', RT_list)

        print('Here the calculation starts:')
        #Printing all the data received from practice trials
        print('responses: ', Resp_list)
        print('corr responses: ', Correct_list)
        print('time: ', RT_list)

        #Compating responses with correst responses (receive a new list)
        Compar = []
        i = 0
        for i in range(52):
            if Resp_list[i] == Correct_list[i]:
                Compar.append(1)
                i = i + 1
            else:
                Compar.append(0)
                i = i + 1



        print('Comparison list: ', Compar)

        #Creating a list of timing for only correct solution of math problem
        Time = []
        for i in range(52):
            n = RT_list[i] * Compar[i]
            Time.append(n)
            i = i + 1

        print('timing without filter =',Time)

        #Filtering list from null data
        Time2 = []
        for i in range(len(Time)):
            if Time[i] == 0.0:
                i = i + 1
            else:
                Time2.append(Time[i])

        print('real timing with filter = ', Time2)

        rt = np.array(Time2)
        fcm = rt.mean()
        fcs = rt.std()

        a = fcm
        b = fcs
        c = a+b
        print('av =', a)
        print('sd = ', b)
        print('trial time =', c)
      End Routine:
        Practice_1.addData('RT_for_exp', c)
  Routine Codepart_2
    PolygonComponent bkac
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent Instro
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Сейчас мы попробуем с вами потренироваться в решении данного теста.
        Вам будет предложено 12 разминочных блоков возрастающей сложности. Если одной практики вам будет недостаточно, у вас будет возможность решить еще 6 дополнительных разминочных блоков.
        Сложность каждой задачи варьируется от 2 до 7 уравнений/букв.

        Если вы готовы продолжить, нажмите "enter".
    KeyboardComponent Start
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction_1
    PolygonComponent WhiteBCK_0_0
      fillColor = white
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
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    TextComponent Instructions
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Вы будете выполнять тест на рабочую память.

        На экране вам будут продемонстрированы математический пример и буква:
        «(5 x 1) - 1 = 4 ? A».

        Вам необходимо ответить, правильно ли решен пример или нет. Если вы считаете, что он решен правильно - нажмите клавишу "1". Если считаете, что решение неверное - нажмите "0". Во время решения вам также необходимо запомнить буквы, которые находятся в конце примеров. После выполнения одного блока примеров, мы попросим вас вспомнить все эти буквы.

        Помните, что при этом, важно правильно решить математический пример.

        Если вы готовы продолжить - нажмите "enter".
    KeyboardComponent Instruction_stop
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Welcome_screen
    PolygonComponent WhiteBCK_0
      fillColor = white
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
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    TextComponent WelcomeText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Здравствуйте!
        Сейчас вы станете участником интересного эксперимента.
        Если вы готовы продолжить - нажмите "enter".
    KeyboardComponent Welcome_screen_stop
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pr_2_Remember_2a
    PolygonComponent B2_1
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent I2_2
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Display2a
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent Ext2
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_24
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Display2a.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Display2a.text = Display2a.text + ' '
            elif 'backspace' in keys:
                Display2a.text = Display2a.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Display2a.text = Display2a.text + keys[0].upper()
                    modify = False
                else:
                    Display2a.text = Display2a.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Display2a.text = Display2a.text[:-1]
                    Display2a.text+= (u'Г')
            elif 'v' in keys:
                    Display2a.text = Display2a.text[:-1]
                    Display2a.text+= (u'М')
            elif 'y' in keys:
                    Display2a.text = Display2a.text[:-1]
                    Display2a.text+= (u'Н')
            elif 'x' in keys:
                    Display2a.text = Display2a.text[:-1]
                    Display2a.text+= (u'Ч')
            elif 'r' in keys:
                    Display2a.text = Display2a.text[:-1]
                    Display2a.text+= (u'К')
            elif 'h' in keys:
                    Display2a.text = Display2a.text[:-1]
                    Display2a.text+= (u'Р')
            elif 'd' in keys:
                    Display2a.text = Display2a.text[:-1]
                    Display2a.text+= (u'В')
            elif 'k' in keys:
                    Display2a.text = Display2a.text[:-1]
                    Display2a.text+= (u'Л')
            elif 'p' in keys:
                    Display2a.text = Display2a.text[:-1]
                    Display2a.text+= (u'З')
            elif 'c' in keys:
                    Display2a.text = Display2a.text[:-1]
                    Display2a.text+= (u'С')
            elif 'n' in keys:
                    Display2a.text = Display2a.text[:-1]
                    Display2a.text+= (u'Т')
            elif 'g' in keys:
                    Display2a.text = Display2a.text[:-1]
                    Display2a.text+= (u'П')
            elif 'l' in keys:
                    Display2a.text = Display2a.text[:-1]
                    Display2a.text+= (u'Д')
            elif 'a' in keys:
                    Display2a.text = Display2a.text[:-1]
                    Display2a.text+= (u'Ф')
            elif 'comma' in keys:
                    Display2a.text = Display2a.text[:-5]
                    Display2a.text+= ('Б')
            elif 'semicolon' in keys:
                    Display2a.text = Display2a.text[:-9]
                    Display2a.text+= ('Ж')
            elif 'w' in keys:
                    Display2a.text = Display2a.text[:-1]
                    Display2a.text+= ('Ц')
            elif 'i' in keys:
                    Display2a.text = Display2a.text[:-1]
                    Display2a.text+= ('Ш')
        #    else:
        #        Display2a.text = Display2a.text[:-1]
      End Routine:
        print(Display2a.text)
        thisExp.addData("typedWord", Display2a.text)
  Routine Pr_2_Rememember_2b
    PolygonComponent B2_2
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent I2_1
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Display1a
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent E2_1
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Display1a.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Display1a.text = Display1a.text + ' '
            elif 'backspace' in keys:
                Display1a.text = Display1a.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Display1a.text = Display1a.text + keys[0].upper()
                    modify = False
                else:
                    Display1a.text = Display1a.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Display1a.text = Display1a.text[:-1]
                    Display1a.text+= (u'Г')
            elif 'v' in keys:
                    Display1a.text = Display1a.text[:-1]
                    Display1a.text+= (u'М')
            elif 'y' in keys:
                    Display1a.text = Display1a.text[:-1]
                    Display1a.text+= (u'Н')
            elif 'r' in keys:
                    Display1a.text = Display1a.text[:-1]
                    Display1a.text+= (u'К')
            elif 'h' in keys:
                    Display1a.text = Display1a.text[:-1]
                    Display1a.text+= (u'Р')
            elif 'd' in keys:
                    Display1a.text = Display1a.text[:-1]
                    Display1a.text+= (u'В')
            elif 'k' in keys:
                    Display1a.text = Display1a.text[:-1]
                    Display1a.text+= (u'Л')
            elif 'p' in keys:
                    Display1a.text = Display1a.text[:-1]
                    Display1a.text+= (u'З')
            elif 'c' in keys:
                    Display1a.text = Display1a.text[:-1]
                    Display1a.text+= (u'С')
            elif 'n' in keys:
                    Display1a.text = Display1a.text[:-1]
                    Display1a.text+= (u'Т')
            elif 'g' in keys:
                    Display1a.text = Display1a.text[:-1]
                    Display1a.text+= (u'П')
            elif 'l' in keys:
                    Display1a.text = Display1a.text[:-1]
                    Display1a.text+= (u'Д')
            elif 'a' in keys:
                    Display1a.text = Display1a.text[:-1]
                    Display1a.text+= (u'Ф')
            elif 'comma' in keys:
                    Display1a.text = Display1a.text[:-5]
                    Display1a.text+= ('Б')
            elif 'semicolon' in keys:
                    Display1a.text = Display1a.text[:-9]
                    Display1a.text+= ('Ж')
            elif 'w' in keys:
                    Display1a.text = Display1a.text[:-1]
                    Display1a.text+= ('Ц')
            elif 'i' in keys:
                    Display1a.text = Display1a.text[:-1]
                    Display1a.text+= ('Ш')
        #    else:
        #        Display1a.text = Display1a.text[:-1]
      End Routine:
        print(Display1a.text)
        thisExp.addData("typedWord", Display1a.text)
  Routine Pr_2_Remember_2c
    PolygonComponent B2_3
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent I2_3
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Display3a
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent E2_3
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_26
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Display3a.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Display3a.text = Display3a.text + ' '
            elif 'backspace' in keys:
                Display3a.text = Display3a.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Display3a.text = Display3a.text + keys[0].upper()
                    modify = False
                else:
                    Display3a.text = Display3a.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Display3a.text = Display3a.text[:-1]
                    Display3a.text+= (u'Г')
            elif 'v' in keys:
                    Display3a.text = Display3a.text[:-1]
                    Display3a.text+= (u'М')
            elif 'y' in keys:
                    Display3a.text = Display3a.text[:-1]
                    Display3a.text+= (u'Н')
            elif 'r' in keys:
                    Display3a.text = Display3a.text[:-1]
                    Display3a.text+= (u'К')
            elif 'h' in keys:
                    Display3a.text = Display3a.text[:-1]
                    Display3a.text+= (u'Р')
            elif 'd' in keys:
                    Display3a.text = Display3a.text[:-1]
                    Display3a.text+= (u'В')
            elif 'k' in keys:
                    Display3a.text = Display3a.text[:-1]
                    Display3a.text+= (u'Л')
            elif 'p' in keys:
                    Display3a.text = Display3a.text[:-1]
                    Display3a.text+= (u'З')
            elif 'c' in keys:
                    Display3a.text = Display3a.text[:-1]
                    Display3a.text+= (u'С')
            elif 'n' in keys:
                    Display3a.text = Display3a.text[:-1]
                    Display3a.text+= (u'Т')
            elif 'g' in keys:
                    Display3a.text = Display3a.text[:-1]
                    Display3a.text+= (u'П')
            elif 'l' in keys:
                    Display3a.text = Display3a.text[:-1]
                    Display3a.text+= (u'Д')
            elif 'a' in keys:
                    Display3a.text = Display3a.text[:-1]
                    Display3a.text+= (u'Ф')
            elif 'comma' in keys:
                    Display3a.text = Display3a.text[:-5]
                    Display3a.text+= ('Б')
            elif 'semicolon' in keys:
                    Display3a.text = Display3a.text[:-9]
                    Display3a.text+= ('Ж')
            elif 'w' in keys:
                    Display3a.text = Display3a.text[:-1]
                    Display3a.text+= ('Ц')
            elif 'i' in keys:
                    Display3a.text = Display3a.text[:-1]
                    Display3a.text+= ('Ш')
        #    else:
        #        Display3a.text = Display3a.text[:-1]
      End Routine:
        print(Display3a.text)
        thisExp.addData("typedWord", Display3a.text)
  Routine Pr_2_Remember_3a
    PolygonComponent B2_4
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent I2_4
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Display4a
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent E2_4
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_27
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Display4a.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Display4a.text = Display4a.text + ' '
            elif 'backspace' in keys:
                Display4a.text = Display4a.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Display4a.text = Display4a.text + keys[0].upper()
                    modify = False
                else:
                    Display4a.text = Display4a.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Display4a.text = Display4a.text[:-1]
                    Display4a.text+= (u'Г')
            elif 'v' in keys:
                    Display4a.text = Display4a.text[:-1]
                    Display4a.text+= (u'М')
            elif 'y' in keys:
                    Display4a.text = Display4a.text[:-1]
                    Display4a.text+= (u'Н')
            elif 'r' in keys:
                    Display4a.text = Display4a.text[:-1]
                    Display4a.text+= (u'К')
            elif 'h' in keys:
                    Display4a.text = Display4a.text[:-1]
                    Display4a.text+= (u'Р')
            elif 'd' in keys:
                    Display4a.text = Display4a.text[:-1]
                    Display4a.text+= (u'В')
            elif 'k' in keys:
                    Display4a.text = Display4a.text[:-1]
                    Display4a.text+= (u'Л')
            elif 'p' in keys:
                    Display4a.text = Display4a.text[:-1]
                    Display4a.text+= (u'З')
            elif 'c' in keys:
                    Display4a.text = Display4a.text[:-1]
                    Display4a.text+= (u'С')
            elif 'n' in keys:
                    Display4a.text = Display4a.text[:-1]
                    Display4a.text+= (u'Т')
            elif 'g' in keys:
                    Display4a.text = Display4a.text[:-1]
                    Display4a.text+= (u'П')
            elif 'l' in keys:
                    Display4a.text = Display4a.text[:-1]
                    Display4a.text+= (u'Д')
            elif 'a' in keys:
                    Display4a.text = Display4a.text[:-1]
                    Display4a.text+= (u'Ф')
            elif 'comma' in keys:
                    Display4a.text = Display4a.text[:-5]
                    Display4a.text+= ('Б')
            elif 'semicolon' in keys:
                    Display4a.text = Display4a.text[:-9]
                    Display4a.text+= ('Ж')
            elif 'w' in keys:
                    Display4a.text = Display4a.text[:-1]
                    Display4a.text+= ('Ц')
            elif 'i' in keys:
                    Display4a.text = Display4a.text[:-1]
                    Display4a.text+= ('Ш')
        #    else:
        #        Display4a.text = Display4a.text[:-1]
      End Routine:
        print(Display4a.text)
        thisExp.addData("typedWord", Display4a.text)
  Routine Pr_2_Remember_3b
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  Routine Pr_2_Remember_3c
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  Routine Instruction_1_1
    PolygonComponent back1
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent Instt
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        На решение каждого примера вам дается до 6 секунд.

        После того, как вы решите несколько примеров, вам будет предложено вспомнить буквы. Постарайтесь вспомнить максимальное количество букв в правильном порядке. Если вы совершили ошибку, вы можете исправить ее с помощью клавиши "backspace". Если вы не помните какую-то букву, вы можете пропустить ее с помощью клавиши "пробел".

        Если вы готовы продолжить - нажмите "enter".
    KeyboardComponent Ex
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Relax
    PolygonComponent B
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent Q
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Сейчас у вас есть 2 минуты отдохнуть.
        Если вы готовы продолжить до истечения этих двух минут, нажмите "enter".
    KeyboardComponent E
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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  Routine StartingExp
    PolygonComponent Backi
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent I
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Теперь вы готовы начать эксперимент.

        Во время эксперимента вам будут предложены аналогичные задания, количество уравнений и букв может варьироваться от 2 до 7. Время на воспроизведение букв ограничено.

        По ходу эксперимента вам будет предложено 3 паузы для отдыха, длящиеся 2 минуты.

        Помните, что в эксперименте важны и правильность решения задач, и количество букв, которые вы запомните.

        Если вы готовы продолжить, нажмите клавишу "enter".
    KeyboardComponent S
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_2a_2
    PolygonComponent Background_1
      fillColor = white
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
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    TextComponent Practice_1a
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $P1
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    TextComponent Instr_1a
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = 1 (верно) ----------- 0 (неверно)
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    KeyboardComponent Key_resp_1
      allowedKeys = '0','1',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent TimM
      Code Type = Auto->JS
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      Begin Experiment:
        Resp_list = []
      Begin Routine:
        RT_list = [] # an empty list to hold your values
      End Routine:
        RT_list.append(Key_resp_1.rt)
        Resp_list.append(Key_resp_1.keys)
        print(Key_resp_1.rt)
        print(Resp_list)
  Routine Ospan_new_1
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  Routine Remember_new_1
    PolygonComponent Bc_22
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent Inst_22
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Dis22
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent Ex_22
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_51
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Dis22.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Dis22.text = Dis22.text + ' '
            elif 'backspace' in keys:
                Dis22.text = Dis22.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Dis22.text = Dis22.text + keys[0].upper()
                    modify = False
                else:
                    Dis22.text = Dis22.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Dis22.text = Dis22.text[:-1]
                    Dis22.text+= (u'Г')
            elif 'v' in keys:
                    Dis22.text = Dis22.text[:-1]
                    Dis22.text+= (u'М')
            elif 'y' in keys:
                    Dis22.text = Dis22.text[:-1]
                    Dis22.text+= (u'Н')
            elif 'r' in keys:
                    Dis22.text = Dis22.text[:-1]
                    Dis22.text+= (u'К')
            elif 'h' in keys:
                    Dis22.text = Dis22.text[:-1]
                    Dis22.text+= (u'Р')
            elif 'd' in keys:
                    Dis22.text = Dis22.text[:-1]
                    Dis22.text+= (u'В')
            elif 'k' in keys:
                    Dis22.text = Dis22.text[:-1]
                    Dis22.text+= (u'Л')
            elif 'p' in keys:
                    Dis22.text = Dis22.text[:-1]
                    Dis22.text+= (u'З')
            elif 'c' in keys:
                    Dis22.text = Dis22.text[:-1]
                    Dis22.text+= (u'С')
            elif 'n' in keys:
                    Dis22.text = Dis22.text[:-1]
                    Dis22.text+= (u'Т')
            elif 'g' in keys:
                    Dis22.text = Dis22.text[:-1]
                    Dis22.text+= (u'П')
            elif 'l' in keys:
                    Dis22.text = Dis22.text[:-1]
                    Dis22.text+= (u'Д')
            elif 'a' in keys:
                    Dis22.text = Dis22.text[:-1]
                    Dis22.text+= (u'Ф')
            elif 'x' in keys:
                    Dis22.text = Dis22.text[:-1]
                    Dis22.text+= (u'Ч')
            elif 'comma' in keys:
                    Dis22.text = Dis22.text[:-5]
                    Dis22.text+= ('Б')
            elif 'semicolon' in keys:
                    Dis22.text = Dis22.text[:-9]
                    Dis22.text+= ('Ж')
            elif 'w' in keys:
                    Dis22.text = Dis22.text[:-1]
                    Dis22.text+= ('Ц')
            elif 'i' in keys:
                    Dis22.text = Dis22.text[:-1]
                    Dis22.text+= ('Ш')
        #    else:
        #        Dis22.text = Dis22.text[:-1]
      End Routine:
        print(Dis22.text)
        Recall_22.addData('Answer of Pax', Dis22.text)
  Routine Ospan_new_2
    PolygonComponent Bck_23
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
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    TextComponent Stim23
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
      text [set every repeat] = $S23
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    KeyboardComponent Ext_23
      allowedKeys = '1','0',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
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  Routine Remember_new_2
    PolygonComponent Bc_23
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent Inst_23
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Dis23
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent Ex_23
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_52
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Dis23.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Dis23.text = Dis23.text + ' '
            elif 'backspace' in keys:
                Dis23.text = Dis23.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Dis23.text = Dis23.text + keys[0].upper()
                    modify = False
                else:
                    Dis23.text = Dis23.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Dis23.text = Dis23.text[:-1]
                    Dis23.text+= (u'Г')
            elif 'v' in keys:
                    Dis23.text = Dis23.text[:-1]
                    Dis23.text+= (u'М')
            elif 'y' in keys:
                    Dis23.text = Dis23.text[:-1]
                    Dis23.text+= (u'Н')
            elif 'r' in keys:
                    Dis23.text = Dis23.text[:-1]
                    Dis23.text+= (u'К')
            elif 'h' in keys:
                    Dis23.text = Dis23.text[:-1]
                    Dis23.text+= (u'Р')
            elif 'd' in keys:
                    Dis23.text = Dis23.text[:-1]
                    Dis23.text+= (u'В')
            elif 'k' in keys:
                    Dis23.text = Dis23.text[:-1]
                    Dis23.text+= (u'Л')
            elif 'x' in keys:
                    Dis23.text = Dis23.text[:-1]
                    Dis23.text+= (u'Ч')
            elif 'p' in keys:
                    Dis23.text = Dis23.text[:-1]
                    Dis23.text+= (u'З')
            elif 'c' in keys:
                    Dis23.text = Dis23.text[:-1]
                    Dis23.text+= (u'С')
            elif 'n' in keys:
                    Dis23.text = Dis23.text[:-1]
                    Dis23.text+= (u'Т')
            elif 'g' in keys:
                    Dis23.text = Dis23.text[:-1]
                    Dis23.text+= (u'П')
            elif 'l' in keys:
                    Dis23.text = Dis23.text[:-1]
                    Dis23.text+= (u'Д')
            elif 'a' in keys:
                    Dis23.text = Dis23.text[:-1]
                    Dis23.text+= (u'Ф')
            elif 'comma' in keys:
                    Dis23.text = Dis23.text[:-5]
                    Dis23.text+= ('Б')
            elif 'semicolon' in keys:
                    Dis23.text = Dis23.text[:-9]
                    Dis23.text+= ('Ж')
            elif 'w' in keys:
                    Dis23.text = Dis23.text[:-1]
                    Dis23.text+= ('Ц')
            elif 'i' in keys:
                    Dis23.text = Dis23.text[:-1]
                    Dis23.text+= ('Ш')
        #    else:
        #        Dis23.text = Dis23.text[:-1]
      End Routine:
        print(Dis23.text)
        Recall_23.addData('Answer of Pax', Dis23.text)
  Routine Ospan_new_3
    PolygonComponent Bck_24
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
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    TextComponent Stim24
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
      text [set every repeat] = $S24
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    KeyboardComponent Ext_24
      allowedKeys = '1','0',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = c
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  Routine Remember_new_3
    PolygonComponent Bc_24
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent Inst_24
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Dis24
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent Ex_24
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_53
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Dis24.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Dis24.text = Dis24.text + ' '
            elif 'backspace' in keys:
                Dis24.text = Dis24.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Dis24.text = Dis24.text + keys[0].upper()
                    modify = False
                else:
                    Dis24.text = Dis24.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Dis24.text = Dis24.text[:-1]
                    Dis24.text+= (u'Г')
            elif 'v' in keys:
                    Dis24.text = Dis24.text[:-1]
                    Dis24.text+= (u'М')
            elif 'y' in keys:
                    Dis24.text = Dis24.text[:-1]
                    Dis24.text+= (u'Н')
            elif 'r' in keys:
                    Dis24.text = Dis24.text[:-1]
                    Dis24.text+= (u'К')
            elif 'h' in keys:
                    Dis24.text = Dis24.text[:-1]
                    Dis24.text+= (u'Р')
            elif 'd' in keys:
                    Dis24.text = Dis24.text[:-1]
                    Dis24.text+= (u'В')
            elif 'k' in keys:
                    Dis24.text = Dis24.text[:-1]
                    Dis24.text+= (u'Л')
            elif 'p' in keys:
                    Dis24.text = Dis24.text[:-1]
                    Dis24.text+= (u'З')
            elif 'c' in keys:
                    Dis24.text = Dis24.text[:-1]
                    Dis24.text+= (u'С')
            elif 'n' in keys:
                    Dis24.text = Dis24.text[:-1]
                    Dis24.text+= (u'Т')
            elif 'g' in keys:
                    Dis24.text = Dis24.text[:-1]
                    Dis24.text+= (u'П')
            elif 'l' in keys:
                    Dis24.text = Dis24.text[:-1]
                    Dis24.text+= (u'Д')
            elif 'a' in keys:
                    Dis24.text = Dis24.text[:-1]
                    Dis24.text+= (u'Ф')
            elif 'comma' in keys:
                    Dis24.text = Dis24.text[:-5]
                    Dis24.text+= ('Б')
            elif 'semicolon' in keys:
                    Dis24.text = Dis24.text[:-9]
                    Dis24.text+= ('Ж')
            elif 'w' in keys:
                    Dis24.text = Dis24.text[:-1]
                    Dis24.text+= ('Ц')
            elif 'i' in keys:
                    Dis24.text = Dis24.text[:-1]
                    Dis24.text+= ('Ш')
        #    else:
        #        Dis24.text = Dis24.text[:-1]
      End Routine:
        print(Dis24.text)
        Recall_24.addData('Answer of Pax', Dis24.text)
  Routine Practice_new_1
    PolygonComponent Bckg_7
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent Practice_7a
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $P7
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    KeyboardComponent Exit_7
      allowedKeys = '0','1',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        RT_list.append(Exit_7.rt)
        Resp_list.append(Exit_7.keys)
        print(Exit_7.rt)
        print(Resp_list)
  Routine PrRemember_new_1
    PolygonComponent Bckgr_7
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent I_7
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Display7
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent E_7
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Display7.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Display7.text = Display7.text + ' '
            elif 'backspace' in keys:
                Display7.text = Display7.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Display7.text = Display7.text + keys[0].upper()
                    modify = False
                else:
                    Display7.text = Display7.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Display7.text = Display7.text[:-1]
                    Display7.text+= (u'Г')
            elif 'v' in keys:
                    Display7.text = Display7.text[:-1]
                    Display7.text+= (u'М')
            elif 'y' in keys:
                    Display7.text = Display7.text[:-1]
                    Display7.text+= (u'Н')
            elif 'r' in keys:
                    Display7.text = Display7.text[:-1]
                    Display7.text+= (u'К')
            elif 'h' in keys:
                    Display7.text = Display7.text[:-1]
                    Display7.text+= (u'Р')
            elif 'd' in keys:
                    Display7.text = Display7.text[:-1]
                    Display7.text+= (u'В')
            elif 'k' in keys:
                    Display7.text = Display7.text[:-1]
                    Display7.text+= (u'Л')
            elif 'p' in keys:
                    Display7.text = Display7.text[:-1]
                    Display7.text+= (u'З')
            elif 'c' in keys:
                    Display7.text = Display7.text[:-1]
                    Display7.text+= (u'С')
            elif 'n' in keys:
                    Display7.text = Display7.text[:-1]
                    Display7.text+= (u'Т')
            elif 'g' in keys:
                    Display7.text = Display7.text[:-1]
                    Display7.text+= (u'П')
            elif 'l' in keys:
                    Display7.text = Display7.text[:-1]
                    Display7.text+= (u'Д')
            elif 'a' in keys:
                    Display7.text = Display7.text[:-1]
                    Display7.text+= (u'Ф')
            elif 'comma' in keys:
                    Display7.text = Display7.text[:-5]
                    Display7.text+= ('Б')
            elif 'semicolon' in keys:
                    Display7.text = Display7.text[:-9]
                    Display7.text+= ('Ж')
            elif 'w' in keys:
                    Display7.text = Display7.text[:-1]
                    Display7.text+= ('Ц')
            elif 'i' in keys:
                    Display7.text = Display7.text[:-1]
                    Display7.text+= ('Ш')
        #    else:
        #        Display7.text = Display7.text[:-1]
      End Routine:
        PrRecall_7.addData('Answer of Pax', Display7.text)
  Routine Practice_new_2
    PolygonComponent Bckgr_8
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent Practice_8a
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $P8
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    KeyboardComponent Exit_8
      allowedKeys = '0','1',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Auto->JS
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      End Routine:
        RT_list.append(Exit_8.rt)
        Resp_list.append(Exit_8.keys)
        print(Exit_8.rt)
        print(Resp_list)
  Routine PrRemember_new_2
    PolygonComponent Bckg_8
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent I_8
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Display8
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent E_8
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Display8.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Display8.text = Display8.text + ' '
            elif 'backspace' in keys:
                Display8.text = Display8.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Display8.text = Display8.text + keys[0].upper()
                    modify = False
                else:
                    Display8.text = Display8.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Display8.text = Display8.text[:-1]
                    Display8.text+= (u'Г')
            elif 'v' in keys:
                    Display8.text = Display8.text[:-1]
                    Display8.text+= (u'М')
            elif 'y' in keys:
                    Display8.text = Display8.text[:-1]
                    Display8.text+= (u'Н')
            elif 'r' in keys:
                    Display8.text = Display8.text[:-1]
                    Display8.text+= (u'К')
            elif 'h' in keys:
                    Display8.text = Display8.text[:-1]
                    Display8.text+= (u'Р')
            elif 'd' in keys:
                    Display8.text = Display8.text[:-1]
                    Display8.text+= (u'В')
            elif 'k' in keys:
                    Display8.text = Display8.text[:-1]
                    Display8.text+= (u'Л')
            elif 'p' in keys:
                    Display8.text = Display8.text[:-1]
                    Display8.text+= (u'З')
            elif 'c' in keys:
                    Display8.text = Display8.text[:-1]
                    Display8.text+= (u'С')
            elif 'n' in keys:
                    Display8.text = Display8.text[:-1]
                    Display8.text+= (u'Т')
            elif 'g' in keys:
                    Display8.text = Display8.text[:-1]
                    Display8.text+= (u'П')
            elif 'l' in keys:
                    Display8.text = Display8.text[:-1]
                    Display8.text+= (u'Д')
            elif 'a' in keys:
                    Display8.text = Display8.text[:-1]
                    Display8.text+= (u'Ф')
            elif 'comma' in keys:
                    Display8.text = Display8.text[:-5]
                    Display8.text+= ('Б')
            elif 'semicolon' in keys:
                    Display8.text = Display8.text[:-9]
                    Display8.text+= ('Ж')
            elif 'w' in keys:
                    Display8.text = Display8.text[:-1]
                    Display8.text+= ('Ц')
            elif 'i' in keys:
                    Display8.text = Display8.text[:-1]
                    Display8.text+= ('Ш')
        #    else:
        #        Display8.text = Display8.text[:-1]
      End Routine:
        PrRecall_8.addData('Answer of Pax', Display8.text)
  Routine Practice_new_3
    PolygonComponent Bckgr_9
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent Practice_9a
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $P9
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    KeyboardComponent Exit_9
      allowedKeys = '0','1',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      End Routine:
        RT_list.append(Exit_9.rt)
        Resp_list.append(Exit_9.keys)
        print(Exit_9.rt)
        print(Resp_list)
  Routine PrRemember_new_3
    PolygonComponent Bckg_9
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent I_9
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Display9
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent E_9
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Display9.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Display9.text = Display9.text + ' '
            elif 'backspace' in keys:
                Display9.text = Display9.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Display9.text = Display9.text + keys[0].upper()
                    modify = False
                else:
                    Display9.text = Display9.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Display9.text = Display9.text[:-1]
                    Display9.text+= (u'Г')
            elif 'v' in keys:
                    Display9.text = Display9.text[:-1]
                    Display9.text+= (u'М')
            elif 'y' in keys:
                    Display9.text = Display9.text[:-1]
                    Display9.text+= (u'Н')
            elif 'r' in keys:
                    Display9.text = Display9.text[:-1]
                    Display9.text+= (u'К')
            elif 'h' in keys:
                    Display9.text = Display9.text[:-1]
                    Display9.text+= (u'Р')
            elif 'd' in keys:
                    Display9.text = Display9.text[:-1]
                    Display9.text+= (u'В')
            elif 'k' in keys:
                    Display9.text = Display9.text[:-1]
                    Display9.text+= (u'Л')
            elif 'p' in keys:
                    Display9.text = Display9.text[:-1]
                    Display9.text+= (u'З')
            elif 'c' in keys:
                    Display9.text = Display9.text[:-1]
                    Display9.text+= (u'С')
            elif 'n' in keys:
                    Display9.text = Display9.text[:-1]
                    Display9.text+= (u'Т')
            elif 'g' in keys:
                    Display9.text = Display9.text[:-1]
                    Display9.text+= (u'П')
            elif 'l' in keys:
                    Display9.text = Display9.text[:-1]
                    Display9.text+= (u'Д')
            elif 'a' in keys:
                    Display9.text = Display9.text[:-1]
                    Display9.text+= (u'Ф')
            elif 'comma' in keys:
                    Display9.text = Display9.text[:-5]
                    Display9.text+= ('Б')
            elif 'semicolon' in keys:
                    Display9.text = Display9.text[:-9]
                    Display9.text+= ('Ж')
            elif 'w' in keys:
                    Display9.text = Display9.text[:-1]
                    Display9.text+= ('Ц')
            elif 'i' in keys:
                    Display9.text = Display9.text[:-1]
                    Display9.text+= ('Ш')
        #    else:
        #        Display9.text = Display9.text[:-1]
      End Routine:
        print(Display9.text)

        PrRecall_9.addData('Answer of Pax', Display9.text)
  Routine Practice_new_4
    PolygonComponent bckgr_10
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent Practice_10a
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $P10
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    KeyboardComponent Exit_10
      allowedKeys = '0','1',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = Auto->JS
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      End Routine:
        RT_list.append(Exit_10.rt)
        Resp_list.append(Exit_10.keys)
        print(Exit_10.rt)
        print(Resp_list)
  Routine PrRemember_new_4
    PolygonComponent Bckg_10
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent I_10
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Display10
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent E_10
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Display10.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Display10.text = Display10.text + ' '
            elif 'backspace' in keys:
                Display10.text = Display10.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Display10.text = Display10.text + keys[0].upper()
                    modify = False
                else:
                    Display10.text = Display10.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Display10.text = Display10.text[:-1]
                    Display10.text+= (u'Г')
            elif 'v' in keys:
                    Display10.text = Display10.text[:-1]
                    Display10.text+= (u'М')
            elif 'y' in keys:
                    Display10.text = Display10.text[:-1]
                    Display10.text+= (u'Н')
            elif 'r' in keys:
                    Display10.text = Display10.text[:-1]
                    Display10.text+= (u'К')
            elif 'h' in keys:
                    Display10.text = Display10.text[:-1]
                    Display10.text+= (u'Р')
            elif 'd' in keys:
                    Display10.text = Display10.text[:-1]
                    Display10.text+= (u'В')
            elif 'k' in keys:
                    Display10.text = Display10.text[:-1]
                    Display10.text+= (u'Л')
            elif 'p' in keys:
                    Display10.text = Display10.text[:-1]
                    Display10.text+= (u'З')
            elif 'c' in keys:
                    Display10.text = Display10.text[:-1]
                    Display10.text+= (u'С')
            elif 'n' in keys:
                    Display10.text = Display10.text[:-1]
                    Display10.text+= (u'Т')
            elif 'g' in keys:
                    Display10.text = Display10.text[:-1]
                    Display10.text+= (u'П')
            elif 'l' in keys:
                    Display10.text = Display10.text[:-1]
                    Display10.text+= (u'Д')
            elif 'a' in keys:
                    Display10.text = Display10.text[:-1]
                    Display10.text+= (u'Ф')
            elif 'comma' in keys:
                    Display10.text = Display10.text[:-5]
                    Display10.text+= ('Б')
            elif 'semicolon' in keys:
                    Display10.text = Display10.text[:-9]
                    Display10.text+= ('Ж')
            elif 'w' in keys:
                    Display10.text = Display10.text[:-1]
                    Display10.text+= ('Ц')
            elif 'i' in keys:
                    Display10.text = Display10.text[:-1]
                    Display10.text+= ('Ш')
        #    else:
        #        Display10.text = Display10.text[:-1]
      End Routine:
        print(Display10.text)
        PrRecall_10.addData('Answer of Pax', Display10.text)
  Routine Practice_new_5
    PolygonComponent Bckgr_11
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent Practice_11a
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $P11
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    KeyboardComponent Exit_11
      allowedKeys = '0','1',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Auto->JS
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      End Routine:
        RT_list.append(Exit_11.rt)
        Resp_list.append(Exit_11.keys)
        print(Exit_11.rt)
        print(Resp_list)
  Routine PrRemember_new_5
    PolygonComponent Bckg_11
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent I_11
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Display11
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent E_11
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_22
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Display11.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Display11.text = Display11.text + ' '
            elif 'backspace' in keys:
                Display11.text = Display11.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Display11.text = Display11.text + keys[0].upper()
                    modify = False
                else:
                    Display11.text = Display11.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Display11.text = Display11.text[:-1]
                    Display11.text+= (u'Г')
            elif 'v' in keys:
                    Display11.text = Display11.text[:-1]
                    Display11.text+= (u'М')
            elif 'y' in keys:
                    Display11.text = Display11.text[:-1]
                    Display11.text+= (u'Н')
            elif 'r' in keys:
                    Display11.text = Display11.text[:-1]
                    Display11.text+= (u'К')
            elif 'h' in keys:
                    Display11.text = Display11.text[:-1]
                    Display11.text+= (u'Р')
            elif 'd' in keys:
                    Display11.text = Display11.text[:-1]
                    Display11.text+= (u'В')
            elif 'k' in keys:
                    Display11.text = Display11.text[:-1]
                    Display11.text+= (u'Л')
            elif 'p' in keys:
                    Display11.text = Display11.text[:-1]
                    Display11.text+= (u'З')
            elif 'c' in keys:
                    Display11.text = Display11.text[:-1]
                    Display11.text+= (u'С')
            elif 'n' in keys:
                    Display11.text = Display11.text[:-1]
                    Display11.text+= (u'Т')
            elif 'g' in keys:
                    Display11.text = Display11.text[:-1]
                    Display11.text+= (u'П')
            elif 'l' in keys:
                    Display11.text = Display11.text[:-1]
                    Display11.text+= (u'Д')
            elif 'a' in keys:
                    Display11.text = Display11.text[:-1]
                    Display11.text+= (u'Ф')
            elif 'comma' in keys:
                    Display11.text = Display11.text[:-5]
                    Display11.text+= ('Б')
            elif 'semicolon' in keys:
                    Display11.text = Display11.text[:-9]
                    Display11.text+= ('Ж')
            elif 'w' in keys:
                    Display11.text = Display11.text[:-1]
                    Display11.text+= ('Ц')
            elif 'i' in keys:
                    Display11.text = Display11.text[:-1]
                    Display11.text+= ('Ш')
        #    else:
        #        Display11.text = Display11.text[:-1]
      End Routine:
        print(Display11.text)
        thisExp.addData("typedWord", Display11.text)
  Routine Practice_new_6
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  Routine PrRemember_new_6
    PolygonComponent Bckg_12
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent I_12
      color = black
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Вспомните показанные буквы:
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    TextComponent Display12
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent E_12
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        Display12.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                Display12.text = Display12.text + ' '
            elif 'backspace' in keys:
                Display12.text = Display12.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    Display12.text = Display12.text + keys[0].upper()
                    modify = False
                else:
                    Display12.text = Display12.text + keys[0]


        if len(keys):
            if 'u' in keys:
                    Display12.text = Display12.text[:-1]
                    Display12.text+= (u'Г')
            elif 'v' in keys:
                    Display12.text = Display12.text[:-1]
                    Display12.text+= (u'М')
            elif 'y' in keys:
                    Display12.text = Display12.text[:-1]
                    Display12.text+= (u'Н')
            elif 'r' in keys:
                    Display12.text = Display12.text[:-1]
                    Display12.text+= (u'К')
            elif 'h' in keys:
                    Display12.text = Display12.text[:-1]
                    Display12.text+= (u'Р')
            elif 'd' in keys:
                    Display12.text = Display12.text[:-1]
                    Display12.text+= (u'В')
            elif 'k' in keys:
                    Display12.text = Display12.text[:-1]
                    Display12.text+= (u'Л')
            elif 'p' in keys:
                    Display12.text = Display12.text[:-1]
                    Display12.text+= (u'З')
            elif 'c' in keys:
                    Display12.text = Display12.text[:-1]
                    Display12.text+= (u'С')
            elif 'n' in keys:
                    Display12.text = Display12.text[:-1]
                    Display12.text+= (u'Т')
            elif 'g' in keys:
                    Display12.text = Display12.text[:-1]
                    Display12.text+= (u'П')
            elif 'l' in keys:
                    Display12.text = Display12.text[:-1]
                    Display12.text+= (u'Д')
            elif 'a' in keys:
                    Display12.text = Display12.text[:-1]
                    Display12.text+= (u'Ф')
            elif 'comma' in keys:
                    Display12.text = Display12.text[:-5]
                    Display12.text+= ('Б')
            elif 'semicolon' in keys:
                    Display12.text = Display12.text[:-9]
                    Display12.text+= ('Ж')
            elif 'w' in keys:
                    Display12.text = Display12.text[:-1]
                    Display12.text+= ('Ц')
            elif 'i' in keys:
                    Display12.text = Display12.text[:-1]
                    Display12.text+= ('Ш')
        #    else:
        #        Display12.text = Display12.text[:-1]
      End Routine:
        print(Display12.text)
        PrRecall_12.addData('Answer of Pax', Display12.text)
  Routine warning
    PolygonComponent B1
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent Question
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Вы готовы продолжить эксперимент?
        Если готовы, нажмите "enter".

        Помните, что в эксперименте важна и правильность решения задач, и количество букв, которые вы запомните.
    KeyboardComponent Answer
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Reminder
    PolygonComponent B3
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent Dec
      allowedKeys = 'p','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent I0
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Помните, что при решении задачи:
        клавиша "1" обозначает верное решение;
        клавиша "0" - неверное.

        Перед началом каждого блока у вас будет время для того, чтобы подготовиться, удобно положить руки на клавиатуру.

        Если вы готовы продолжить, нажмите "enter"
    KeyboardComponent E0
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Hint_part
      Code Type = Auto->JS
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      Before Experiment:
        Correct_list = ['0','1','1','0','0','0','1','0','1','1','0','1','0','0','1','0','1','1','0','0','1','1','1','0','1','1','1','0','1','1','0','1','0','0','0','1','0','1','0','1','0','0','1','0','0','1','1','1','1','0','0','0','0','1']
      Begin Experiment:
        DoP = 1
        DoExp = 1
      End Routine:
        #if(Dec.keys == 'return'):
        #    DoP = 1

        if(Dec.keys == 's'):
            DoP = 0
            DoPrac = 0
        #    DoExp = 1
            c = 4
  Routine Thank_2
    PolygonComponent polygon
      fillColor = white
      shape = rectangle
      size = (5.5, 5.5)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Спасибо за ваше участие в нашем эксперименте.
        Все полученные в эксперименте данные - анонимны.

        Если вы хотите закончить эксперимент, нажмите "enter".
    KeyboardComponent key_resp
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome_screen
  Routine Instruction_1
  Routine Instruction_1_1
  Routine Reminder
  Routine Blank100
  LoopInitiator Practice_1 loopType="TrialHandler"
    loopType = sequential
    nReps = DoP
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    Routine Codepart_2
    Routine ThankYouScreen
    LoopInitiator Practice__1 loopType="TrialHandler"
      Selected rows = :2
      conditionsFile = Practise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('P1', '(10 / 1) - 5 = 7 ? A'), ('P2', '(7 x 7) + 1 = 50 ? I'), ('P3', '(8 x 4) + 2 = 34 ? O'), ('P4', '(2 x 7) + 1 = 13 ? E'), ('P5', '(10 x 2) + 3 = 22 ? Y'), ('P6', '(2 x 3) + 5 = 10 ? U')]),
        OrderedDict([('P1', '(6 x 2) + 2 = 14 ? E'), ('P2', '(4 / 2) - 2 = 2 ? Y'), ('P3', '(9 / 1) + 5 = 14 ? U'), ('P4', '(3 x 7) - 2 = 21 ? A'), ('P5', '(2 / 1) + 7 = 9 ? I'), ('P6', '(5 x 2) + 1 = 12 ? O')]),
        OrderedDict([('P1', None), ('P2', None), ('P3', None), ('P4', '(9 / 3) + 3 = 6 ? O'), ('P5', '(8 / 4) + 2 = 4 ? U '), ('P6', '(7 / 1) + 6 = 13 ? I ')])]
      Routine Practice_2a_2
      Routine Blank100
    LoopTerminator Practice__1
    LoopInitiator Recall_1 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine PrRemember_2a
    LoopTerminator Recall_1
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Practice__2 loopType="TrialHandler"
      Selected rows = :2
      conditionsFile = Practise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('P1', '(10 / 1) - 5 = 7 ? A'), ('P2', '(7 x 7) + 1 = 50 ? I'), ('P3', '(8 x 4) + 2 = 34 ? O'), ('P4', '(2 x 7) + 1 = 13 ? E'), ('P5', '(10 x 2) + 3 = 22 ? Y'), ('P6', '(2 x 3) + 5 = 10 ? U')]),
        OrderedDict([('P1', '(6 x 2) + 2 = 14 ? E'), ('P2', '(4 / 2) - 2 = 2 ? Y'), ('P3', '(9 / 1) + 5 = 14 ? U'), ('P4', '(3 x 7) - 2 = 21 ? A'), ('P5', '(2 / 1) + 7 = 9 ? I'), ('P6', '(5 x 2) + 1 = 12 ? O')]),
        OrderedDict([('P1', None), ('P2', None), ('P3', None), ('P4', '(9 / 3) + 3 = 6 ? O'), ('P5', '(8 / 4) + 2 = 4 ? U '), ('P6', '(7 / 1) + 6 = 13 ? I ')])]
      Routine Practice_2b
      Routine Blank100
    LoopTerminator Practice__2
    LoopInitiator Recall_2 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine PrRemember_2b
    LoopTerminator Recall_2
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Practice__3 loopType="TrialHandler"
      Selected rows = :3
      conditionsFile = Practise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Practice_2c
      Routine Blank100
    LoopTerminator Practice__3
    LoopInitiator Recall_3 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine PrRemember_2c
    LoopTerminator Recall_3
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Practice__4 loopType="TrialHandler"
      Selected rows = :3
      conditionsFile = Practise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Practice_3a
      Routine Blank100
    LoopTerminator Practice__4
    LoopInitiator Recall_4 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine PrRemember_3a
    LoopTerminator Recall_4
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Practice__5 loopType="TrialHandler"
      Selected rows = :4
      conditionsFile = Practise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Practice_3b
      Routine Blank100
    LoopTerminator Practice__5
    LoopInitiator Recall_5 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine PrRemember_3b
    LoopTerminator Recall_5
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Practice__6 loopType="TrialHandler"
      Selected rows = :4
      conditionsFile = Practise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Practice_3c
      Routine Blank100
    LoopTerminator Practice__6
    LoopInitiator Recall_6 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine PrRemember_3c
    LoopTerminator Recall_6
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Practice_7 loopType="TrialHandler"
      Selected rows = :5
      conditionsFile = Practise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('P1', '(10 / 1) - 5 = 7 ? A'), ('P2', '(7 x 7) + 1 = 50 ? I'), ('P3', '(8 x 4) + 2 = 34 ? O'), ('P4', '(2 x 7) + 1 = 13 ? E'), ('P5', '(10 x 2) + 3 = 22 ? Y'), ('P6', '(2 x 3) + 5 = 10 ? U'), ('P7', '(10 / 1) - 5 = 7 ? R'), ('P8', '(7 x 7) + 1 = 50 ? I'), ('P9', '(8 x 4) + 2 = 34 ? Q'), ('P10', '(2 x 7) + 1 = 13 ? Z'), ('P11', '(10 x 2) + 3 = 22 P'), ('P12', '(2 x 3) + 5 = 10 ? T')]),
        OrderedDict([('P1', '(6 x 2) + 2 = 14 ? E'), ('P2', '(4 / 2) - 2 = 2 ? Y'), ('P3', '(9 / 1) + 5 = 14 ? U'), ('P4', '(3 x 7) - 2 = 21 ? A'), ('P5', '(2 / 1) + 7 = 9 ? I'), ('P6', '(5 x 2) + 1 = 12 ? O'), ('P7', '(6 x 2) + 2 = 14 ? T'), ('P8', '(4 / 2) - 2 = 2 ? Y'), ('P9', '(9 / 1) + 5 = 14 ? G'), ('P10', '(3 x 7) - 2 = 21 ? R'), ('P11', '(2 / 1) + 7 = 9 ? J'), ('P12', '(5 x 2) + 1 = 12 ? B')]),
        OrderedDict([('P1', None), ('P2', None), ('P3', None), ('P4', '(9 / 3) + 3 = 6 ? O'), ('P5', '(8 / 4) + 2 = 4 ? U '), ('P6', '(7 / 1) + 6 = 13 ? I '), ('P7', '(2 x 7) + 1 = 13 ? N'), ('P8', '(10 / 1) + 3 = 13 ? O'), ('P9', '(5 x 2) + 2 = 10 ? K'), ('P10', '(9 / 3) + 3 = 6 ? F'), ('P11', '(8 / 4) + 2 = 4 ? S'), ('P12', '(7 / 1) + 6 = 13 ? V')]),
        OrderedDict([('P1', None), ('P2', None), ('P3', None), ('P4', None), ('P5', None), ('P6', None), ('P7', '(4 / 2) - 2 = 2 ? V'), ('P8', '(6 x 2) + 2 = 14 ? E'), ('P9', '(3 / 1) + 1 = 4 ? P'), ('P10', '(7 x 2) + 3 = 17 ? M'), ('P11', '(9 / 1) + 1 = 10 ? N'), ('P12', '(8 x 3) - 1 = 22 ? Q')])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
      Routine Practice_new_1
      Routine Blank100
    LoopTerminator Practice_7
    LoopInitiator PrRecall_7 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine PrRemember_new_1
    LoopTerminator PrRecall_7
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Practice_8 loopType="TrialHandler"
      Selected rows = :5
      conditionsFile = Practise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('P1', '(10 / 1) - 5 = 7 ? A'), ('P2', '(7 x 7) + 1 = 50 ? I'), ('P3', '(8 x 4) + 2 = 34 ? O'), ('P4', '(2 x 7) + 1 = 13 ? E'), ('P5', '(10 x 2) + 3 = 22 ? Y'), ('P6', '(2 x 3) + 5 = 10 ? U'), ('P7', '(10 / 1) - 5 = 7 ? R'), ('P8', '(7 x 7) + 1 = 50 ? I'), ('P9', '(8 x 4) + 2 = 34 ? Q'), ('P10', '(2 x 7) + 1 = 13 ? Z'), ('P11', '(10 x 2) + 3 = 22 P'), ('P12', '(2 x 3) + 5 = 10 ? T')]),
        OrderedDict([('P1', '(6 x 2) + 2 = 14 ? E'), ('P2', '(4 / 2) - 2 = 2 ? Y'), ('P3', '(9 / 1) + 5 = 14 ? U'), ('P4', '(3 x 7) - 2 = 21 ? A'), ('P5', '(2 / 1) + 7 = 9 ? I'), ('P6', '(5 x 2) + 1 = 12 ? O'), ('P7', '(6 x 2) + 2 = 14 ? T'), ('P8', '(4 / 2) - 2 = 2 ? Y'), ('P9', '(9 / 1) + 5 = 14 ? G'), ('P10', '(3 x 7) - 2 = 21 ? R'), ('P11', '(2 / 1) + 7 = 9 ? J'), ('P12', '(5 x 2) + 1 = 12 ? B')]),
        OrderedDict([('P1', None), ('P2', None), ('P3', None), ('P4', '(9 / 3) + 3 = 6 ? O'), ('P5', '(8 / 4) + 2 = 4 ? U '), ('P6', '(7 / 1) + 6 = 13 ? I '), ('P7', '(2 x 7) + 1 = 13 ? N'), ('P8', '(10 / 1) + 3 = 13 ? O'), ('P9', '(5 x 2) + 2 = 10 ? K'), ('P10', '(9 / 3) + 3 = 6 ? F'), ('P11', '(8 / 4) + 2 = 4 ? S'), ('P12', '(7 / 1) + 6 = 13 ? V')]),
        OrderedDict([('P1', None), ('P2', None), ('P3', None), ('P4', None), ('P5', None), ('P6', None), ('P7', '(4 / 2) - 2 = 2 ? V'), ('P8', '(6 x 2) + 2 = 14 ? E'), ('P9', '(3 / 1) + 1 = 4 ? P'), ('P10', '(7 x 2) + 3 = 17 ? M'), ('P11', '(9 / 1) + 1 = 10 ? N'), ('P12', '(8 x 3) - 1 = 22 ? Q')])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
      Routine Practice_new_2
      Routine Blank100
    LoopTerminator Practice_8
    LoopInitiator PrRecall_8 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine PrRemember_new_2
    LoopTerminator PrRecall_8
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Practice_9 loopType="TrialHandler"
      Selected rows = :6
      conditionsFile = Practise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Practice_new_3
      Routine Blank100
    LoopTerminator Practice_9
    LoopInitiator PrRecall_9 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine PrRemember_new_3
    LoopTerminator PrRecall_9
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Practice_10 loopType="TrialHandler"
      Selected rows = :6
      conditionsFile = Practise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Practice_new_4
      Routine Blank100
    LoopTerminator Practice_10
    LoopInitiator PrRecall_10 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine PrRemember_new_4
    LoopTerminator PrRecall_10
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Practice_11 loopType="TrialHandler"
      Selected rows = :7
      conditionsFile = Practise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Practice_new_5
      Routine Blank100
    LoopTerminator Practice_11
    LoopInitiator PrRecall_11 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine PrRemember_new_5
    LoopTerminator PrRecall_11
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Practice_12 loopType="TrialHandler"
      Selected rows = :7
      conditionsFile = Practise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Practice_new_6
      Routine Blank100
    LoopTerminator Practice_12
    LoopInitiator PrRecall_12 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine PrRemember_new_6
    LoopTerminator PrRecall_12
    Routine Blank100
    Routine Instruction_2
  LoopTerminator Practice_1
  Routine Time_Calculation
  LoopInitiator Practice_2 loopType="TrialHandler"
    loopType = sequential
    nReps = DoPrac
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    Routine CodePart
    Routine ThankYouScreen
    LoopInitiator Practice__1b loopType="TrialHandler"
      Selected rows = :2
      conditionsFile = Practise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Practice_2a_2
      Routine Blank100
    LoopTerminator Practice__1b
    LoopInitiator Recall__2a loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Pr_2_Remember_2a
    LoopTerminator Recall__2a
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Practice__2b loopType="TrialHandler"
      Selected rows = :2
      conditionsFile = Practise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Practice_2b
      Routine Blank100
    LoopTerminator Practice__2b
    LoopInitiator Recall__2b loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Pr_2_Rememember_2b
    LoopTerminator Recall__2b
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Practice__3b loopType="TrialHandler"
      Selected rows = :3
      conditionsFile = Practise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Practice_2c
      Routine Blank100
    LoopTerminator Practice__3b
    LoopInitiator Recall__2c loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Pr_2_Remember_2c
    LoopTerminator Recall__2c
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Practice__4b loopType="TrialHandler"
      Selected rows = :3
      conditionsFile = Practise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Practice_3a
      Routine Blank100
    LoopTerminator Practice__4b
    LoopInitiator Recall__3a loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Pr_2_Remember_3a
    LoopTerminator Recall__3a
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Practice__5b loopType="TrialHandler"
      Selected rows = :4
      conditionsFile = Practise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Practice_3b
      Routine Blank100
    LoopTerminator Practice__5b
    LoopInitiator Recall__3b loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Pr_2_Remember_3b
    LoopTerminator Recall__3b
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Practice__6b loopType="TrialHandler"
      Selected rows = :4
      conditionsFile = Practise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Practice_3c
      Routine Blank100
    LoopTerminator Practice__6b
    LoopInitiator Recall__3c loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Pr_2_Remember_3c
    LoopTerminator Recall__3c
    Routine Blank100
    Routine Instruction_3
  LoopTerminator Practice_2
  Routine Blank100
  Routine StartingExp
  Routine Blank100
  LoopInitiator Experiment loopType="TrialHandler"
    loopType = sequential
    nReps = DoExp
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    Routine ThankYouScreen
    LoopInitiator Trial_1 loopType="TrialHandler"
      Selected rows = :3
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('S1', '(10 / 1) - 9 = 3  ? R'), ('S2', '(3 / 1) + 4 = 9 ? M'), ('S3', '(4 x 3) - 6 = 8 ? W'), ('S4', '(5 x 1) + 1 = 6 ? Q'), ('S5', '(4 / 1) - 4 = 0 ? G'), ('S6', '(8 / 1) - 5 = 3 ? V'), ('S7', '(2 x 2) + 1 = 5 ? X'), ('S8', '(4 x 5) - 1 = 21 ? Q'), ('S9', '(5 x 5) + 3 = 28 ? M'), ('S10', '(6 / 2) + 1 = 4  ? S'), ('S11', '(5 x 4) + 1 = 23 ? B'), ('S12', '(2 x 4) + 1 = 9 ? N'), ('S13', '(6 x 1) + 9 = 16 ? Z'), ('S14', '(4 x 2) + 1 = 9 ? V'), ('S15', '(9 / 3) + 1 = 3 ? X'), ('S16', '(5 x 3) + 3 = 18 ? R'), ('S17', '(5 x 2) + 2 = 10 ? Z'), ('S18', '(4 / 1) + 4 = 6 ? G'), ('S19', '(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,
        OrderedDict([('S1', '(2 / 1) + 4 = 6  ? W'), ('S2', '(9 x 1) - 9 = 1  ? Z'), ('S3', '(9 x 1) - 7 = 2  ? T'), ('S4', '(10 / 2) - 4 = 3 ? B'), ('S5', '(10 x 1) + 9 = 19  ? Z'), ('S6', '(2 / 2) - 2 = 0 ? S'), ('S7', '(7 / 1) - 2 = 5 ? Q'), ('S8', '(8 x 2) - 4 = 13  ? M'), ('S9', '(3 x 2) - 1 = 6 ? T'), ('S10', '(7 / 1) + 2 = 9  ? Z'), ('S11', '(7 x 2) - 1 = 14 ? X'), ('S12', '(8 / 4) + 4 = 8 ? W'), ('S13', '(9 x 5) - 1 = 44  ? S'), ('S14', '(10 / 2) + 5 = 10 ? G'), ('S15', '(7 x 7) - 1 = 49  ? V'), ('S16', '(3 / 1) + 1 = 4 ? X'), ('S17', '(8 x 3) - 1 = 22 ? W'), ('S18', '(10 / 1) + 3 = 13  ? W'),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,
        OrderedDict([('S1', '(8 / 1) - 6 = 4 ? N'), ('S2', '(6 x 4) + 1 = 25 ? R'), ('S3', '(3 x 4) + 2 = 14  ? Q'), ('S4', '(9 x 4) - 6 = 32  ? W'), ('S5', None), ('S6', '(5 / 1) - 1 = 6 ? G'), ('S7', '(8 / 2) - 4 = 0  ? T'), ('S8', None), ('S9', '(6 / 3) + 8 = 10  ? W'), ('S10', '(9 / 1) + 8 = 18  ? M'), ('S11', '(3 / 1) - 1 = 4  ? S'), ('S12', '(7 / 7) + 9 = 11  ? R'), ('S13', '(10 / 1) + 1 = 11  ? X'), ('S14', '(2 x 4) + 1 = 9 ? Z'), ('S15', None), ('S16', '(7 x 7) + 1 = 48  ? T'), ('S17', '(10 / 2) - 2 = 7 ? S'), ('S18', '(6 x 3) - 2 = 17  ? B'), ('S19', '(2 / 1) - 2 = 0  ? T'), ('S20', '(2 / 2) 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,
        OrderedDict([('S1', '(6 x 7) - 6 = 38 ? T'), ('S2', '(5 / 5) + 1 = 2 ? S'), ('S3', '(7 / 1) + 6 = 12  ? G'), ('S4', '(6 / 3) + 4 = 7  ? G'), ('S5', None), ('S6', '(10 x 2) + 4 = 22 ? T'), ('S7', '(9 x 2) - 1 = 18  ? V'), ('S8', None), ('S9', '(10 x 5) + 1 = 51  ? N'), ('S10', '(10 / 1) - 1 = 11 ? V'), ('S11', '(4 / 2) - 1 = 1 ? M'), ('S12', None), ('S13', None), ('S14', '(6 x 3) - 2 = 17  ? Q'), ('S15', None), ('S16', '(6 / 2) - 3 = 2  ? Z'), ('S17', '(7 x 2) + 3 = 16  ? N'), ('S18', '(3 x 2) - 2 = 5  ? N'), ('S19', None), ('S20', '(6 / 2) + 3 = 7  ? V'), ('S21', '(5 / 1) + 7 = 13 ? N')])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
      Routine Ospan_4a
      Routine Blank100
    LoopTerminator Trial_1
    LoopInitiator Remember_1 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_4a
    LoopTerminator Remember_1
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_2 loopType="TrialHandler"
      Selected rows = :7
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_5a
      Routine Blank100
    LoopTerminator Trial_2
    LoopInitiator Remember_2 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_5a
    LoopTerminator Remember_2
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_3 loopType="TrialHandler"
      Selected rows = :2
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_7a
      Routine Blank100
    LoopTerminator Trial_3
    LoopInitiator Remember_3 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_7a
    LoopTerminator Remember_3
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_4 loopType="TrialHandler"
      Selected rows = :4
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_6a
      Routine Blank100
    LoopTerminator Trial_4
    LoopInitiator Remember_4 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_6a
    LoopTerminator Remember_4
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_5 loopType="TrialHandler"
      Selected rows = :7
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_2a
      Routine Blank100
    LoopTerminator Trial_5
    LoopInitiator Remember_5 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_2a
    LoopTerminator Remember_5
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_6 loopType="TrialHandler"
      Selected rows = :6
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_8a
      Routine Blank100
    LoopTerminator Trial_6
    LoopInitiator Remember_6 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_8a
    LoopTerminator Remember_6
    Routine Blank100
    Routine Relax
    Routine Blank100
    Routine warning
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_7 loopType="TrialHandler"
      Selected rows = :5
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_5b
      Routine Blank100
    LoopTerminator Trial_7
    LoopInitiator Remember_7 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_5b
    LoopTerminator Remember_7
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_8 loopType="TrialHandler"
      Selected rows = :2
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_2b
      Routine Blank100
    LoopTerminator Trial_8
    LoopInitiator Remember_8 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_2b
    LoopTerminator Remember_8
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_9 loopType="TrialHandler"
      Selected rows = :3
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_8b
      Routine Blank100
    LoopTerminator Trial_9
    LoopInitiator Remember_9 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_8b
    LoopTerminator Remember_9
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_10 loopType="TrialHandler"
      Selected rows = :2
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_7b
      Routine Blank100
    LoopTerminator Trial_10
    LoopInitiator Remember_10 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_7b
    LoopTerminator Remember_10
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_11 loopType="TrialHandler"
      Selected rows = :4
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_4b
      Routine Blank100
    LoopTerminator Trial_11
    LoopInitiator Remember_11 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_4b
    LoopTerminator Remember_11
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_12 loopType="TrialHandler"
      Selected rows = :5
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_3a
      Routine Blank100
    LoopTerminator Trial_12
    LoopInitiator Remember_12 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_3a
    LoopTerminator Remember_12
    Routine Blank100
    Routine Relax
    Routine Blank100
    Routine warning
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_13 loopType="TrialHandler"
      Selected rows = :7
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_3b
      Routine Blank100
    LoopTerminator Trial_13
    LoopInitiator Remember_13 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_3b
    LoopTerminator Remember_13
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_14 loopType="TrialHandler"
      Selected rows = :6
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_4c
      Routine Blank100
    LoopTerminator Trial_14
    LoopInitiator Remember_14 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_4c
    LoopTerminator Remember_14
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_15 loopType="TrialHandler"
      Selected rows = :7
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_2c
      Routine Blank100
    LoopTerminator Trial_15
    LoopInitiator Remember_15 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_2c
    LoopTerminator Remember_15
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_16 loopType="TrialHandler"
      Selected rows = :5
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_7c
      Routine Blank100
    LoopTerminator Trial_16
    LoopInitiator Remember_16 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_7c
    LoopTerminator Remember_16
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_17 loopType="TrialHandler"
      Selected rows = :4
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_8c
      Routine Blank100
    LoopTerminator Trial_17
    LoopInitiator Remember_17 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_8c
    LoopTerminator Remember_17
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_18 loopType="TrialHandler"
      Selected rows = :6
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_5c
      Routine Blank100
    LoopTerminator Trial_18
    LoopInitiator Remember_18 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_5c
    LoopTerminator Remember_18
    Routine Blank100
    Routine Relax
    Routine Blank100
    Routine warning
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_19 loopType="TrialHandler"
      Selected rows = :6
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_3c
      Routine Blank100
    LoopTerminator Trial_19
    LoopInitiator Remember_19 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_3c
    LoopTerminator Remember_19
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_20 loopType="TrialHandler"
      Selected rows = :4
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_6b
      Routine Blank100
    LoopTerminator Trial_20
    LoopInitiator Remember_20 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_6b
    LoopTerminator Remember_20
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_21 loopType="TrialHandler"
      Selected rows = :5
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_6c
      Routine Blank100
    LoopTerminator Trial_21
    LoopInitiator Remember_21 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_6c
    LoopTerminator Remember_21
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_22 loopType="TrialHandler"
      Selected rows = :3
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_new_1
      Routine Blank100
    LoopTerminator Trial_22
    LoopInitiator Recall_22 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_new_1
    LoopTerminator Recall_22
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_23 loopType="TrialHandler"
      Selected rows = :3
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_new_2
      Routine Blank100
    LoopTerminator Trial_23
    LoopInitiator Recall_23 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_new_2
    LoopTerminator Recall_23
    Routine Blank100
    Routine ThankYouScreen
    LoopInitiator Trial_24 loopType="TrialHandler"
      Selected rows = :2
      conditionsFile = Condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Ospan_new_3
      Routine Blank100
    LoopTerminator Trial_24
    LoopInitiator Recall_24 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Remember_new_3
    LoopTerminator Recall_24
    Routine Blank100
  LoopTerminator Experiment
  Routine Thank_2
